# Epigenetic regulation model according to Sneppen et al.  made in the Basic BNGL Model 

#Testing epigenetic combinatory

####################################################

#Transcription iniciation of the device is achieved by the same signal that induces the ori-

#ginal module

#This model considers two nucleosomes in the regulatory reguion of Aa

#Such nucleosomes can be in A,U or M state



####################################################

begin model

begin parameters #Parameters involved in the model's chemical equations
	k_act 3600*60
	k_inact 18*60
   
   	s 0.1
	
	
	koff 1e-11 #0.045*60#0.13*60#Disociation rate for lexA domain to the Aa promoter
	kon 1e-9 #0.0225*60*1e-9*6.022e23*42e-15#koff/20#Asociation rate for lexA domain to the Aa promoter
	
	tau 120 #Yeast duplication time

	k_degr log(2)/tau#degradation rate according to Ajo-Franco et al log(2)/tau
	k_degrRNA log(2)/15# Yeast is Quantification of protein 
half-lives in the budding yeast proteome Archana Belle et al. PNAS
	
    #Aa related#########################################################################################################

	#Epigenetics
	#Non TF present
	kr 0.001387508
	ka 0.000265988
	ka_I ka*1000

	tf_ka  ka_I*100 # much bigger than mean rate of histone  conversion between U and A forms or from M to U form due to TF 
	                 # per min http://www.jbc.org/content/285/5/3341/T2.expansion.html por el de metilaci�n (cambiandolo por acetilaci�n)
					 #tf stands for transcription factor
	
	k_prod_Aa 0.69 #production constant from mRNA (translation)
	TR_Aa 14.4*10#28.97*1000/(6.023e23*42e-15*1e-9)#rate of 
transcription from As(r!0).AaP(l!0,q~b) or Aa(r!0).AaP(l!0,q~b)binding 
					#28.97 was consideren for constitutive trasncription (similar to AJo-Franco and cols)
					#Here we are not including such basal transcription (may be important for further models
	koffR koff*2^-5#1e-11#1e-7
	kdR (koff/kon)*2^-5#(koff/kon)/1000#1e-6#(koff/kon)/10
	konR koffR/kdR
	
end parameters


begin molecule types #Molecules involved in the model dynamics

	#Isolated

	RNA_Aa() #Auto astivator (Aa) RNA

	As(b) #Signaling component it has one DNA binding site l

	Aa(b,u~a~i) #Autoactivator it has also one DNA binding site to its own promoter

	AaP(b,N1~d~a,N2~d~a,N3~d~a,N4~d~a,N5~d~a)  #Autoactivator promoter has 8 potential sites to be bound by TF. A single binding can change the whole promoter to an active transcription form

	Trash() 
	
	RP(b,N1~d~a,N2~d~a)
	
	AsP()
end molecule types


begin seed species #Initial conditions for variables (Molecules)

	#Isolated

	RNA_Aa() 0

	As(b) 0 #100000/(6.022e23*42e-15*1e-9)

	Aa(b,u~i) 0

	AaP(b,N1~d,N2~d,N3~d,N4~d,N5~d) 2

	Trash()  0
    
    RP(b,N1~a,N2~d) 0

	AsP() 1
end  seed species




begin observables #Molecules that will be given in the output or used for further calculations


#Molecules Complex AaP(H1~A,H2~A,b!0).As(b!0)

Molecules Aa Aa(b)

Molecules As As(b)

end observables

begin reaction rules

##################################################################

#Epigenetic game
#Non TF
#random changes in the nucleosome state (ka stands for acetylation changes and kr for methylation ones 

AaP(N1~a,N2~a,N3~a,N4~a,N5~d,b)->AaP(N1~d,N2~a,N3~a,N4~a,N5~d,b)	kr
AaP(N1~a,N2~a,N3~a,N4~a,N5~d,b)->AaP(N1~a,N2~d,N3~a,N4~a,N5~d,b)	kr
AaP(N1~a,N2~a,N3~a,N4~a,N5~d,b)->AaP(N1~a,N2~a,N3~d,N4~a,N5~d,b)	kr
AaP(N1~a,N2~a,N3~a,N4~a,N5~d,b)->AaP(N1~a,N2~a,N3~a,N4~d,N5~d,b)	kr
AaP(N1~a,N2~a,N3~a,N4~a,N5~d,b)->AaP(N1~a,N2~a,N3~a,N4~a,N5~a,b)	ka
AaP(N1~a,N2~a,N3~a,N4~d,N5~a,b)->AaP(N1~d,N2~a,N3~a,N4~d,N5~a,b)	kr
AaP(N1~a,N2~a,N3~a,N4~d,N5~a,b)->AaP(N1~a,N2~d,N3~a,N4~d,N5~a,b)	kr
AaP(N1~a,N2~a,N3~a,N4~d,N5~a,b)->AaP(N1~a,N2~a,N3~d,N4~d,N5~a,b)	kr
AaP(N1~a,N2~a,N3~a,N4~d,N5~a,b)->AaP(N1~a,N2~a,N3~a,N4~d,N5~d,b)	kr
AaP(N1~a,N2~a,N3~a,N4~d,N5~a,b)->AaP(N1~a,N2~a,N3~a,N4~a,N5~a,b)	ka
AaP(N1~a,N2~a,N3~d,N4~a,N5~a,b)->AaP(N1~d,N2~a,N3~d,N4~a,N5~a,b)	kr
AaP(N1~a,N2~a,N3~d,N4~a,N5~a,b)->AaP(N1~a,N2~d,N3~d,N4~a,N5~a,b)	kr
AaP(N1~a,N2~a,N3~d,N4~a,N5~a,b)->AaP(N1~a,N2~a,N3~d,N4~d,N5~a,b)	kr
AaP(N1~a,N2~a,N3~d,N4~a,N5~a,b)->AaP(N1~a,N2~a,N3~d,N4~a,N5~d,b)	kr
AaP(N1~a,N2~a,N3~d,N4~a,N5~a,b)->AaP(N1~a,N2~a,N3~a,N4~a,N5~a,b)	ka
AaP(N1~a,N2~d,N3~a,N4~a,N5~a,b)->AaP(N1~d,N2~d,N3~a,N4~a,N5~a,b)	kr
AaP(N1~a,N2~d,N3~a,N4~a,N5~a,b)->AaP(N1~a,N2~d,N3~d,N4~a,N5~a,b)	kr
AaP(N1~a,N2~d,N3~a,N4~a,N5~a,b)->AaP(N1~a,N2~d,N3~a,N4~d,N5~a,b)	kr
AaP(N1~a,N2~d,N3~a,N4~a,N5~a,b)->AaP(N1~a,N2~d,N3~a,N4~a,N5~d,b)	kr
AaP(N1~a,N2~d,N3~a,N4~a,N5~a,b)->AaP(N1~a,N2~a,N3~a,N4~a,N5~a,b)	ka
AaP(N1~d,N2~a,N3~a,N4~a,N5~a,b)->AaP(N1~d,N2~a,N3~d,N4~a,N5~a,b)	kr
AaP(N1~d,N2~a,N3~a,N4~a,N5~a,b)->AaP(N1~d,N2~a,N3~a,N4~d,N5~a,b)	kr
AaP(N1~d,N2~a,N3~a,N4~a,N5~a,b)->AaP(N1~d,N2~a,N3~a,N4~a,N5~d,b)	kr
AaP(N1~d,N2~a,N3~a,N4~a,N5~a,b)->AaP(N1~d,N2~d,N3~a,N4~a,N5~a,b)	kr
AaP(N1~d,N2~a,N3~a,N4~a,N5~a,b)->AaP(N1~a,N2~a,N3~a,N4~a,N5~a,b)	ka
AaP(N1~d,N2~a,N3~d,N4~a,N5~a,b)->AaP(N1~a,N2~a,N3~d,N4~a,N5~a,b)	ka
AaP(N1~d,N2~a,N3~d,N4~a,N5~a,b)->AaP(N1~d,N2~a,N3~a,N4~a,N5~a,b)	ka
AaP(N1~d,N2~a,N3~d,N4~a,N5~a,b)->AaP(N1~d,N2~a,N3~d,N4~a,N5~d,b)	kr
AaP(N1~d,N2~a,N3~d,N4~a,N5~a,b)->AaP(N1~d,N2~a,N3~d,N4~d,N5~a,b)	kr
AaP(N1~d,N2~a,N3~d,N4~a,N5~a,b)->AaP(N1~d,N2~d,N3~d,N4~a,N5~a,b)	kr
AaP(N1~d,N2~a,N3~a,N4~d,N5~a,b)->AaP(N1~a,N2~a,N3~a,N4~d,N5~a,b)	ka
AaP(N1~d,N2~a,N3~a,N4~d,N5~a,b)->AaP(N1~d,N2~a,N3~a,N4~a,N5~a,b)	ka
AaP(N1~d,N2~a,N3~a,N4~d,N5~a,b)->AaP(N1~d,N2~a,N3~a,N4~d,N5~d,b)	kr
AaP(N1~d,N2~a,N3~a,N4~d,N5~a,b)->AaP(N1~d,N2~a,N3~d,N4~d,N5~a,b)	kr
AaP(N1~d,N2~a,N3~a,N4~d,N5~a,b)->AaP(N1~d,N2~d,N3~a,N4~d,N5~a,b)	kr
AaP(N1~d,N2~a,N3~a,N4~a,N5~d,b)->AaP(N1~a,N2~a,N3~a,N4~a,N5~d,b)	ka
AaP(N1~d,N2~a,N3~a,N4~a,N5~d,b)->AaP(N1~d,N2~a,N3~a,N4~a,N5~a,b)	ka
AaP(N1~d,N2~a,N3~a,N4~a,N5~d,b)->AaP(N1~d,N2~a,N3~a,N4~d,N5~d,b)	kr
AaP(N1~d,N2~a,N3~a,N4~a,N5~d,b)->AaP(N1~d,N2~a,N3~d,N4~a,N5~d,b)	kr
AaP(N1~d,N2~a,N3~a,N4~a,N5~d,b)->AaP(N1~d,N2~d,N3~a,N4~a,N5~d,b)	kr
AaP(N1~d,N2~d,N3~a,N4~a,N5~a,b)->AaP(N1~a,N2~d,N3~a,N4~a,N5~a,b)	ka
AaP(N1~d,N2~d,N3~a,N4~a,N5~a,b)->AaP(N1~d,N2~a,N3~a,N4~a,N5~a,b)	ka
AaP(N1~d,N2~d,N3~a,N4~a,N5~a,b)->AaP(N1~d,N2~d,N3~a,N4~a,N5~d,b)	kr
AaP(N1~d,N2~d,N3~a,N4~a,N5~a,b)->AaP(N1~d,N2~d,N3~a,N4~d,N5~a,b)	kr
AaP(N1~d,N2~d,N3~a,N4~a,N5~a,b)->AaP(N1~d,N2~d,N3~d,N4~a,N5~a,b)	kr
AaP(N1~a,N2~d,N3~d,N4~a,N5~a,b)->AaP(N1~a,N2~a,N3~d,N4~a,N5~a,b)	ka
AaP(N1~a,N2~d,N3~d,N4~a,N5~a,b)->AaP(N1~a,N2~d,N3~a,N4~a,N5~a,b)	ka
AaP(N1~a,N2~d,N3~d,N4~a,N5~a,b)->AaP(N1~a,N2~d,N3~d,N4~a,N5~d,b)	kr
AaP(N1~a,N2~d,N3~d,N4~a,N5~a,b)->AaP(N1~a,N2~d,N3~d,N4~d,N5~a,b)	kr
AaP(N1~a,N2~d,N3~d,N4~a,N5~a,b)->AaP(N1~d,N2~d,N3~d,N4~a,N5~a,b)	kr
AaP(N1~a,N2~d,N3~a,N4~d,N5~a,b)->AaP(N1~a,N2~a,N3~a,N4~d,N5~a,b)	ka
AaP(N1~a,N2~d,N3~a,N4~d,N5~a,b)->AaP(N1~a,N2~d,N3~a,N4~a,N5~a,b)	ka
AaP(N1~a,N2~d,N3~a,N4~d,N5~a,b)->AaP(N1~a,N2~d,N3~a,N4~d,N5~d,b)	kr
AaP(N1~a,N2~d,N3~a,N4~d,N5~a,b)->AaP(N1~a,N2~d,N3~d,N4~d,N5~a,b)	kr
AaP(N1~a,N2~d,N3~a,N4~d,N5~a,b)->AaP(N1~d,N2~d,N3~a,N4~d,N5~a,b)	kr
AaP(N1~a,N2~d,N3~a,N4~a,N5~d,b)->AaP(N1~a,N2~a,N3~a,N4~a,N5~d,b)	ka
AaP(N1~a,N2~d,N3~a,N4~a,N5~d,b)->AaP(N1~a,N2~d,N3~a,N4~a,N5~a,b)	ka
AaP(N1~a,N2~d,N3~a,N4~a,N5~d,b)->AaP(N1~a,N2~d,N3~a,N4~d,N5~d,b)	kr
AaP(N1~a,N2~d,N3~a,N4~a,N5~d,b)->AaP(N1~a,N2~d,N3~d,N4~a,N5~d,b)	kr
AaP(N1~a,N2~d,N3~a,N4~a,N5~d,b)->AaP(N1~d,N2~d,N3~a,N4~a,N5~d,b)	kr
AaP(N1~a,N2~a,N3~d,N4~d,N5~a,b)->AaP(N1~a,N2~a,N3~a,N4~d,N5~a,b)	ka
AaP(N1~a,N2~a,N3~d,N4~d,N5~a,b)->AaP(N1~a,N2~a,N3~d,N4~a,N5~a,b)	ka
AaP(N1~a,N2~a,N3~d,N4~d,N5~a,b)->AaP(N1~a,N2~d,N3~d,N4~d,N5~a,b)	kr
AaP(N1~a,N2~a,N3~d,N4~d,N5~a,b)->AaP(N1~a,N2~a,N3~d,N4~d,N5~d,b)	kr
AaP(N1~a,N2~a,N3~d,N4~d,N5~a,b)->AaP(N1~d,N2~a,N3~d,N4~d,N5~a,b)	kr
AaP(N1~a,N2~a,N3~d,N4~a,N5~d,b)->AaP(N1~a,N2~a,N3~a,N4~a,N5~d,b)	ka
AaP(N1~a,N2~a,N3~d,N4~a,N5~d,b)->AaP(N1~a,N2~a,N3~d,N4~a,N5~a,b)	ka
AaP(N1~a,N2~a,N3~d,N4~a,N5~d,b)->AaP(N1~a,N2~d,N3~d,N4~a,N5~d,b)	kr
AaP(N1~a,N2~a,N3~d,N4~a,N5~d,b)->AaP(N1~a,N2~a,N3~d,N4~d,N5~d,b)	kr
AaP(N1~a,N2~a,N3~d,N4~a,N5~d,b)->AaP(N1~d,N2~a,N3~d,N4~a,N5~d,b)	kr
AaP(N1~a,N2~a,N3~a,N4~d,N5~d,b)->AaP(N1~a,N2~a,N3~a,N4~a,N5~d,b)	ka
AaP(N1~a,N2~a,N3~a,N4~d,N5~d,b)->AaP(N1~a,N2~a,N3~a,N4~d,N5~a,b)	ka
AaP(N1~a,N2~a,N3~a,N4~d,N5~d,b)->AaP(N1~a,N2~d,N3~a,N4~d,N5~d,b)	kr
AaP(N1~a,N2~a,N3~a,N4~d,N5~d,b)->AaP(N1~a,N2~a,N3~d,N4~d,N5~d,b)	kr
AaP(N1~a,N2~a,N3~a,N4~d,N5~d,b)->AaP(N1~d,N2~a,N3~a,N4~d,N5~d,b)	kr
AaP(N1~a,N2~d,N3~a,N4~d,N5~d,b)->AaP(N1~a,N2~d,N3~a,N4~d,N5~a,b)	ka
AaP(N1~a,N2~d,N3~a,N4~d,N5~d,b)->AaP(N1~a,N2~d,N3~a,N4~a,N5~d,b)	ka
AaP(N1~a,N2~d,N3~a,N4~d,N5~d,b)->AaP(N1~a,N2~a,N3~a,N4~d,N5~d,b)	ka
AaP(N1~a,N2~d,N3~a,N4~d,N5~d,b)->AaP(N1~d,N2~d,N3~a,N4~d,N5~d,b)	kr
AaP(N1~a,N2~d,N3~a,N4~d,N5~d,b)->AaP(N1~a,N2~d,N3~d,N4~d,N5~d,b)	kr
AaP(N1~a,N2~d,N3~d,N4~a,N5~d,b)->AaP(N1~a,N2~d,N3~d,N4~a,N5~a,b)	ka
AaP(N1~a,N2~d,N3~d,N4~a,N5~d,b)->AaP(N1~a,N2~d,N3~a,N4~a,N5~d,b)	ka
AaP(N1~a,N2~d,N3~d,N4~a,N5~d,b)->AaP(N1~a,N2~a,N3~d,N4~a,N5~d,b)	ka
AaP(N1~a,N2~d,N3~d,N4~a,N5~d,b)->AaP(N1~d,N2~d,N3~d,N4~a,N5~d,b)	kr
AaP(N1~a,N2~d,N3~d,N4~a,N5~d,b)->AaP(N1~a,N2~d,N3~d,N4~d,N5~d,b)	kr
AaP(N1~a,N2~d,N3~d,N4~d,N5~a,b)->AaP(N1~a,N2~d,N3~d,N4~a,N5~a,b)	ka
AaP(N1~a,N2~d,N3~d,N4~d,N5~a,b)->AaP(N1~a,N2~d,N3~a,N4~d,N5~a,b)	ka
AaP(N1~a,N2~d,N3~d,N4~d,N5~a,b)->AaP(N1~a,N2~a,N3~d,N4~d,N5~a,b)	ka
AaP(N1~a,N2~d,N3~d,N4~d,N5~a,b)->AaP(N1~d,N2~d,N3~d,N4~d,N5~a,b)	kr
AaP(N1~a,N2~d,N3~d,N4~d,N5~a,b)->AaP(N1~a,N2~d,N3~d,N4~d,N5~d,b)	kr
AaP(N1~a,N2~a,N3~d,N4~d,N5~d,b)->AaP(N1~a,N2~a,N3~d,N4~d,N5~a,b)	ka
AaP(N1~a,N2~a,N3~d,N4~d,N5~d,b)->AaP(N1~a,N2~a,N3~d,N4~a,N5~d,b)	ka
AaP(N1~a,N2~a,N3~d,N4~d,N5~d,b)->AaP(N1~a,N2~a,N3~a,N4~d,N5~d,b)	ka
AaP(N1~a,N2~a,N3~d,N4~d,N5~d,b)->AaP(N1~d,N2~a,N3~d,N4~d,N5~d,b)	kr
AaP(N1~a,N2~a,N3~d,N4~d,N5~d,b)->AaP(N1~a,N2~d,N3~d,N4~d,N5~d,b)	kr
AaP(N1~d,N2~a,N3~a,N4~d,N5~d,b)->AaP(N1~d,N2~a,N3~a,N4~d,N5~a,b)	ka
AaP(N1~d,N2~a,N3~a,N4~d,N5~d,b)->AaP(N1~d,N2~a,N3~a,N4~a,N5~d,b)	ka
AaP(N1~d,N2~a,N3~a,N4~d,N5~d,b)->AaP(N1~a,N2~a,N3~a,N4~d,N5~d,b)	ka
AaP(N1~d,N2~a,N3~a,N4~d,N5~d,b)->AaP(N1~d,N2~a,N3~d,N4~d,N5~d,b)	kr
AaP(N1~d,N2~a,N3~a,N4~d,N5~d,b)->AaP(N1~d,N2~d,N3~a,N4~d,N5~d,b)	kr
AaP(N1~d,N2~a,N3~d,N4~a,N5~d,b)->AaP(N1~d,N2~a,N3~d,N4~a,N5~a,b)	ka
AaP(N1~d,N2~a,N3~d,N4~a,N5~d,b)->AaP(N1~d,N2~a,N3~a,N4~a,N5~d,b)	ka
AaP(N1~d,N2~a,N3~d,N4~a,N5~d,b)->AaP(N1~a,N2~a,N3~d,N4~a,N5~d,b)	ka
AaP(N1~d,N2~a,N3~d,N4~a,N5~d,b)->AaP(N1~d,N2~a,N3~d,N4~d,N5~d,b)	kr
AaP(N1~d,N2~a,N3~d,N4~a,N5~d,b)->AaP(N1~d,N2~d,N3~d,N4~a,N5~d,b)	kr
AaP(N1~d,N2~a,N3~d,N4~d,N5~a,b)->AaP(N1~d,N2~a,N3~d,N4~a,N5~a,b)	ka
AaP(N1~d,N2~a,N3~d,N4~d,N5~a,b)->AaP(N1~d,N2~a,N3~a,N4~d,N5~a,b)	ka
AaP(N1~d,N2~a,N3~d,N4~d,N5~a,b)->AaP(N1~a,N2~a,N3~d,N4~d,N5~a,b)	ka
AaP(N1~d,N2~a,N3~d,N4~d,N5~a,b)->AaP(N1~d,N2~a,N3~d,N4~d,N5~d,b)	kr
AaP(N1~d,N2~a,N3~d,N4~d,N5~a,b)->AaP(N1~d,N2~d,N3~d,N4~d,N5~a,b)	kr
AaP(N1~d,N2~d,N3~a,N4~a,N5~d,b)->AaP(N1~d,N2~a,N3~a,N4~a,N5~d,b)	ka
AaP(N1~d,N2~d,N3~a,N4~a,N5~d,b)->AaP(N1~d,N2~d,N3~a,N4~a,N5~a,b)	ka
AaP(N1~d,N2~d,N3~a,N4~a,N5~d,b)->AaP(N1~a,N2~d,N3~a,N4~a,N5~d,b)	ka
AaP(N1~d,N2~d,N3~a,N4~a,N5~d,b)->AaP(N1~d,N2~d,N3~a,N4~d,N5~d,b)	kr
AaP(N1~d,N2~d,N3~a,N4~a,N5~d,b)->AaP(N1~d,N2~d,N3~d,N4~a,N5~d,b)	kr
AaP(N1~d,N2~d,N3~a,N4~d,N5~a,b)->AaP(N1~d,N2~a,N3~a,N4~d,N5~a,b)	ka
AaP(N1~d,N2~d,N3~a,N4~d,N5~a,b)->AaP(N1~d,N2~d,N3~a,N4~a,N5~a,b)	ka
AaP(N1~d,N2~d,N3~a,N4~d,N5~a,b)->AaP(N1~a,N2~d,N3~a,N4~d,N5~a,b)	ka
AaP(N1~d,N2~d,N3~a,N4~d,N5~a,b)->AaP(N1~d,N2~d,N3~a,N4~d,N5~d,b)	kr
AaP(N1~d,N2~d,N3~a,N4~d,N5~a,b)->AaP(N1~d,N2~d,N3~d,N4~d,N5~a,b)	kr
AaP(N1~d,N2~d,N3~d,N4~a,N5~a,b)->AaP(N1~d,N2~a,N3~d,N4~a,N5~a,b)	ka
AaP(N1~d,N2~d,N3~d,N4~a,N5~a,b)->AaP(N1~d,N2~d,N3~a,N4~a,N5~a,b)	ka
AaP(N1~d,N2~d,N3~d,N4~a,N5~a,b)->AaP(N1~a,N2~d,N3~d,N4~a,N5~a,b)	ka
AaP(N1~d,N2~d,N3~d,N4~a,N5~a,b)->AaP(N1~d,N2~d,N3~d,N4~a,N5~d,b)	kr
AaP(N1~d,N2~d,N3~d,N4~a,N5~a,b)->AaP(N1~d,N2~d,N3~d,N4~d,N5~a,b)	kr
AaP(N1~d,N2~a,N3~d,N4~d,N5~d,b)->AaP(N1~a,N2~a,N3~d,N4~d,N5~d,b)	ka
AaP(N1~d,N2~a,N3~d,N4~d,N5~d,b)->AaP(N1~d,N2~a,N3~a,N4~d,N5~d,b)	ka
AaP(N1~d,N2~a,N3~d,N4~d,N5~d,b)->AaP(N1~d,N2~a,N3~d,N4~a,N5~d,b)	ka
AaP(N1~d,N2~a,N3~d,N4~d,N5~d,b)->AaP(N1~d,N2~a,N3~d,N4~d,N5~a,b)	ka
AaP(N1~d,N2~a,N3~d,N4~d,N5~d,b)->AaP(N1~d,N2~d,N3~d,N4~d,N5~d,b)	kr
AaP(N1~d,N2~d,N3~a,N4~d,N5~d,b)->AaP(N1~a,N2~d,N3~a,N4~d,N5~d,b)	ka
AaP(N1~d,N2~d,N3~a,N4~d,N5~d,b)->AaP(N1~d,N2~a,N3~a,N4~d,N5~d,b)	ka
AaP(N1~d,N2~d,N3~a,N4~d,N5~d,b)->AaP(N1~d,N2~d,N3~a,N4~a,N5~d,b)	ka
AaP(N1~d,N2~d,N3~a,N4~d,N5~d,b)->AaP(N1~d,N2~d,N3~a,N4~d,N5~a,b)	ka
AaP(N1~d,N2~d,N3~a,N4~d,N5~d,b)->AaP(N1~d,N2~d,N3~d,N4~d,N5~d,b)	kr
AaP(N1~d,N2~d,N3~d,N4~a,N5~d,b)->AaP(N1~a,N2~d,N3~d,N4~a,N5~d,b)	ka
AaP(N1~d,N2~d,N3~d,N4~a,N5~d,b)->AaP(N1~d,N2~a,N3~d,N4~a,N5~d,b)	ka
AaP(N1~d,N2~d,N3~d,N4~a,N5~d,b)->AaP(N1~d,N2~d,N3~a,N4~a,N5~d,b)	ka
AaP(N1~d,N2~d,N3~d,N4~a,N5~d,b)->AaP(N1~d,N2~d,N3~d,N4~a,N5~a,b)	ka
AaP(N1~d,N2~d,N3~d,N4~a,N5~d,b)->AaP(N1~d,N2~d,N3~d,N4~d,N5~d,b)	kr
AaP(N1~d,N2~d,N3~d,N4~d,N5~a,b)->AaP(N1~a,N2~d,N3~d,N4~d,N5~a,b)	ka
AaP(N1~d,N2~d,N3~d,N4~d,N5~a,b)->AaP(N1~d,N2~a,N3~d,N4~d,N5~a,b)	ka
AaP(N1~d,N2~d,N3~d,N4~d,N5~a,b)->AaP(N1~d,N2~d,N3~a,N4~d,N5~a,b)	ka
AaP(N1~d,N2~d,N3~d,N4~d,N5~a,b)->AaP(N1~d,N2~d,N3~d,N4~a,N5~a,b)	ka
AaP(N1~d,N2~d,N3~d,N4~d,N5~a,b)->AaP(N1~d,N2~d,N3~d,N4~d,N5~d,b)	kr
AaP(N1~a,N2~d,N3~d,N4~d,N5~d,b)->AaP(N1~a,N2~d,N3~a,N4~d,N5~d,b)	ka
AaP(N1~a,N2~d,N3~d,N4~d,N5~d,b)->AaP(N1~a,N2~d,N3~d,N4~a,N5~d,b)	ka
AaP(N1~a,N2~d,N3~d,N4~d,N5~d,b)->AaP(N1~a,N2~d,N3~d,N4~d,N5~a,b)	ka
AaP(N1~a,N2~d,N3~d,N4~d,N5~d,b)->AaP(N1~a,N2~a,N3~d,N4~d,N5~d,b)	ka
AaP(N1~a,N2~d,N3~d,N4~d,N5~d,b)->AaP(N1~d,N2~d,N3~d,N4~d,N5~d,b)	kr
AaP(N1~d,N2~d,N3~d,N4~d,N5~d,b)->AaP(N1~d,N2~a,N3~d,N4~d,N5~d,b)	ka
AaP(N1~d,N2~d,N3~d,N4~d,N5~d,b)->AaP(N1~d,N2~d,N3~a,N4~d,N5~d,b)	ka
AaP(N1~d,N2~d,N3~d,N4~d,N5~d,b)->AaP(N1~d,N2~d,N3~d,N4~a,N5~d,b)	ka
AaP(N1~d,N2~d,N3~d,N4~d,N5~d,b)->AaP(N1~d,N2~d,N3~d,N4~d,N5~a,b)	ka
AaP(N1~d,N2~d,N3~d,N4~d,N5~d,b)->AaP(N1~a,N2~d,N3~d,N4~d,N5~d,b)	ka
AaP(N1~a,N2~a,N3~a,N4~a,N5~a,b)->AaP(N1~a,N2~a,N3~a,N4~a,N5~d,b)	kr
AaP(N1~a,N2~a,N3~a,N4~a,N5~a,b)->AaP(N1~a,N2~a,N3~a,N4~d,N5~a,b)	kr
AaP(N1~a,N2~a,N3~a,N4~a,N5~a,b)->AaP(N1~a,N2~a,N3~d,N4~a,N5~a,b)	kr
AaP(N1~a,N2~a,N3~a,N4~a,N5~a,b)->AaP(N1~a,N2~d,N3~a,N4~a,N5~a,b)	kr
AaP(N1~a,N2~a,N3~a,N4~a,N5~a,b)->AaP(N1~d,N2~a,N3~a,N4~a,N5~a,b)	kr
#Non_random

AaP(N1~a,N2~a,N3~a,N4~a,N5~d,b)->AaP(N1~a,N2~a,N3~a,N4~a,N5~a,b)	ka_I
AaP(N1~a,N2~a,N3~a,N4~d,N5~a,b)->AaP(N1~a,N2~a,N3~a,N4~a,N5~a,b)	ka_I
AaP(N1~a,N2~a,N3~d,N4~a,N5~a,b)->AaP(N1~a,N2~a,N3~a,N4~a,N5~a,b)	ka_I
AaP(N1~a,N2~d,N3~a,N4~a,N5~a,b)->AaP(N1~a,N2~a,N3~a,N4~a,N5~a,b)	ka_I
AaP(N1~d,N2~a,N3~a,N4~a,N5~a,b)->AaP(N1~a,N2~a,N3~a,N4~a,N5~a,b)	ka_I
AaP(N1~d,N2~a,N3~d,N4~a,N5~a,b)->AaP(N1~a,N2~a,N3~d,N4~a,N5~a,b)	ka_I
AaP(N1~d,N2~a,N3~d,N4~a,N5~a,b)->AaP(N1~d,N2~a,N3~a,N4~a,N5~a,b)	ka_I
AaP(N1~d,N2~a,N3~a,N4~d,N5~a,b)->AaP(N1~a,N2~a,N3~a,N4~d,N5~a,b)	ka_I
AaP(N1~d,N2~a,N3~a,N4~d,N5~a,b)->AaP(N1~d,N2~a,N3~a,N4~a,N5~a,b)	ka_I
AaP(N1~d,N2~a,N3~a,N4~a,N5~d,b)->AaP(N1~a,N2~a,N3~a,N4~a,N5~d,b)	ka_I
AaP(N1~d,N2~a,N3~a,N4~a,N5~d,b)->AaP(N1~d,N2~a,N3~a,N4~a,N5~a,b)	ka_I
AaP(N1~d,N2~d,N3~a,N4~a,N5~a,b)->AaP(N1~a,N2~d,N3~a,N4~a,N5~a,b)	ka_I
AaP(N1~d,N2~d,N3~a,N4~a,N5~a,b)->AaP(N1~d,N2~a,N3~a,N4~a,N5~a,b)	ka_I
AaP(N1~a,N2~d,N3~d,N4~a,N5~a,b)->AaP(N1~a,N2~a,N3~d,N4~a,N5~a,b)	ka_I
AaP(N1~a,N2~d,N3~d,N4~a,N5~a,b)->AaP(N1~a,N2~d,N3~a,N4~a,N5~a,b)	ka_I
AaP(N1~a,N2~d,N3~a,N4~d,N5~a,b)->AaP(N1~a,N2~a,N3~a,N4~d,N5~a,b)	ka_I
AaP(N1~a,N2~d,N3~a,N4~d,N5~a,b)->AaP(N1~a,N2~d,N3~a,N4~a,N5~a,b)	ka_I
AaP(N1~a,N2~d,N3~a,N4~a,N5~d,b)->AaP(N1~a,N2~a,N3~a,N4~a,N5~d,b)	ka_I
AaP(N1~a,N2~d,N3~a,N4~a,N5~d,b)->AaP(N1~a,N2~d,N3~a,N4~a,N5~a,b)	ka_I
AaP(N1~a,N2~a,N3~d,N4~d,N5~a,b)->AaP(N1~a,N2~a,N3~a,N4~d,N5~a,b)	ka_I
AaP(N1~a,N2~a,N3~d,N4~d,N5~a,b)->AaP(N1~a,N2~a,N3~d,N4~a,N5~a,b)	ka_I
AaP(N1~a,N2~a,N3~d,N4~a,N5~d,b)->AaP(N1~a,N2~a,N3~a,N4~a,N5~d,b)	ka_I
AaP(N1~a,N2~a,N3~d,N4~a,N5~d,b)->AaP(N1~a,N2~a,N3~d,N4~a,N5~a,b)	ka_I
AaP(N1~a,N2~a,N3~a,N4~d,N5~d,b)->AaP(N1~a,N2~a,N3~a,N4~a,N5~d,b)	ka_I
AaP(N1~a,N2~a,N3~a,N4~d,N5~d,b)->AaP(N1~a,N2~a,N3~a,N4~d,N5~a,b)	ka_I
AaP(N1~a,N2~d,N3~a,N4~d,N5~d,b)->AaP(N1~a,N2~d,N3~a,N4~d,N5~a,b)	ka_I
AaP(N1~a,N2~d,N3~a,N4~d,N5~d,b)->AaP(N1~a,N2~d,N3~a,N4~a,N5~d,b)	ka_I
AaP(N1~a,N2~d,N3~a,N4~d,N5~d,b)->AaP(N1~a,N2~a,N3~a,N4~d,N5~d,b)	ka_I
AaP(N1~a,N2~d,N3~d,N4~a,N5~d,b)->AaP(N1~a,N2~d,N3~d,N4~a,N5~a,b)	ka_I
AaP(N1~a,N2~d,N3~d,N4~a,N5~d,b)->AaP(N1~a,N2~d,N3~a,N4~a,N5~d,b)	ka_I
AaP(N1~a,N2~d,N3~d,N4~a,N5~d,b)->AaP(N1~a,N2~a,N3~d,N4~a,N5~d,b)	ka_I
AaP(N1~a,N2~d,N3~d,N4~d,N5~a,b)->AaP(N1~a,N2~d,N3~d,N4~a,N5~a,b)	ka_I
AaP(N1~a,N2~d,N3~d,N4~d,N5~a,b)->AaP(N1~a,N2~d,N3~a,N4~d,N5~a,b)	ka_I
AaP(N1~a,N2~d,N3~d,N4~d,N5~a,b)->AaP(N1~a,N2~a,N3~d,N4~d,N5~a,b)	ka_I
AaP(N1~a,N2~a,N3~d,N4~d,N5~d,b)->AaP(N1~a,N2~a,N3~d,N4~d,N5~a,b)	ka_I
AaP(N1~a,N2~a,N3~d,N4~d,N5~d,b)->AaP(N1~a,N2~a,N3~d,N4~a,N5~d,b)	ka_I
AaP(N1~a,N2~a,N3~d,N4~d,N5~d,b)->AaP(N1~a,N2~a,N3~a,N4~d,N5~d,b)	ka_I
AaP(N1~d,N2~a,N3~a,N4~d,N5~d,b)->AaP(N1~d,N2~a,N3~a,N4~d,N5~a,b)	ka_I
AaP(N1~d,N2~a,N3~a,N4~d,N5~d,b)->AaP(N1~d,N2~a,N3~a,N4~a,N5~d,b)	ka_I
AaP(N1~d,N2~a,N3~a,N4~d,N5~d,b)->AaP(N1~a,N2~a,N3~a,N4~d,N5~d,b)	ka_I
AaP(N1~d,N2~a,N3~d,N4~a,N5~d,b)->AaP(N1~d,N2~a,N3~d,N4~a,N5~a,b)	ka_I
AaP(N1~d,N2~a,N3~d,N4~a,N5~d,b)->AaP(N1~d,N2~a,N3~a,N4~a,N5~d,b)	ka_I
AaP(N1~d,N2~a,N3~d,N4~a,N5~d,b)->AaP(N1~a,N2~a,N3~d,N4~a,N5~d,b)	ka_I
AaP(N1~d,N2~a,N3~d,N4~d,N5~a,b)->AaP(N1~d,N2~a,N3~d,N4~a,N5~a,b)	ka_I
AaP(N1~d,N2~a,N3~d,N4~d,N5~a,b)->AaP(N1~d,N2~a,N3~a,N4~d,N5~a,b)	ka_I
AaP(N1~d,N2~a,N3~d,N4~d,N5~a,b)->AaP(N1~a,N2~a,N3~d,N4~d,N5~a,b)	ka_I
AaP(N1~d,N2~d,N3~a,N4~a,N5~d,b)->AaP(N1~d,N2~a,N3~a,N4~a,N5~d,b)	ka_I
AaP(N1~d,N2~d,N3~a,N4~a,N5~d,b)->AaP(N1~d,N2~d,N3~a,N4~a,N5~a,b)	ka_I
AaP(N1~d,N2~d,N3~a,N4~a,N5~d,b)->AaP(N1~a,N2~d,N3~a,N4~a,N5~d,b)	ka_I
AaP(N1~d,N2~d,N3~a,N4~d,N5~a,b)->AaP(N1~d,N2~a,N3~a,N4~d,N5~a,b)	ka_I
AaP(N1~d,N2~d,N3~a,N4~d,N5~a,b)->AaP(N1~d,N2~d,N3~a,N4~a,N5~a,b)	ka_I
AaP(N1~d,N2~d,N3~a,N4~d,N5~a,b)->AaP(N1~a,N2~d,N3~a,N4~d,N5~a,b)	ka_I
AaP(N1~d,N2~d,N3~d,N4~a,N5~a,b)->AaP(N1~d,N2~a,N3~d,N4~a,N5~a,b)	ka_I
AaP(N1~d,N2~d,N3~d,N4~a,N5~a,b)->AaP(N1~d,N2~d,N3~a,N4~a,N5~a,b)	ka_I
AaP(N1~d,N2~d,N3~d,N4~a,N5~a,b)->AaP(N1~a,N2~d,N3~d,N4~a,N5~a,b)	ka_I
AaP(N1~d,N2~a,N3~d,N4~d,N5~d,b)->AaP(N1~a,N2~a,N3~d,N4~d,N5~d,b)	ka_I
AaP(N1~d,N2~a,N3~d,N4~d,N5~d,b)->AaP(N1~d,N2~a,N3~a,N4~d,N5~d,b)	ka_I
AaP(N1~d,N2~a,N3~d,N4~d,N5~d,b)->AaP(N1~d,N2~a,N3~d,N4~a,N5~d,b)	ka_I
AaP(N1~d,N2~a,N3~d,N4~d,N5~d,b)->AaP(N1~d,N2~a,N3~d,N4~d,N5~a,b)	ka_I
AaP(N1~d,N2~d,N3~a,N4~d,N5~d,b)->AaP(N1~a,N2~d,N3~a,N4~d,N5~d,b)	ka_I
AaP(N1~d,N2~d,N3~a,N4~d,N5~d,b)->AaP(N1~d,N2~a,N3~a,N4~d,N5~d,b)	ka_I
AaP(N1~d,N2~d,N3~a,N4~d,N5~d,b)->AaP(N1~d,N2~d,N3~a,N4~a,N5~d,b)	ka_I
AaP(N1~d,N2~d,N3~a,N4~d,N5~d,b)->AaP(N1~d,N2~d,N3~a,N4~d,N5~a,b)	ka_I
AaP(N1~d,N2~d,N3~d,N4~a,N5~d,b)->AaP(N1~a,N2~d,N3~d,N4~a,N5~d,b)	ka_I
AaP(N1~d,N2~d,N3~d,N4~a,N5~d,b)->AaP(N1~d,N2~a,N3~d,N4~a,N5~d,b)	ka_I
AaP(N1~d,N2~d,N3~d,N4~a,N5~d,b)->AaP(N1~d,N2~d,N3~a,N4~a,N5~d,b)	ka_I
AaP(N1~d,N2~d,N3~d,N4~a,N5~d,b)->AaP(N1~d,N2~d,N3~d,N4~a,N5~a,b)	ka_I
AaP(N1~d,N2~d,N3~d,N4~d,N5~a,b)->AaP(N1~a,N2~d,N3~d,N4~d,N5~a,b)	ka_I
AaP(N1~d,N2~d,N3~d,N4~d,N5~a,b)->AaP(N1~d,N2~a,N3~d,N4~d,N5~a,b)	ka_I
AaP(N1~d,N2~d,N3~d,N4~d,N5~a,b)->AaP(N1~d,N2~d,N3~a,N4~d,N5~a,b)	ka_I
AaP(N1~d,N2~d,N3~d,N4~d,N5~a,b)->AaP(N1~d,N2~d,N3~d,N4~a,N5~a,b)	ka_I
AaP(N1~a,N2~d,N3~d,N4~d,N5~d,b)->AaP(N1~a,N2~d,N3~a,N4~d,N5~d,b)	ka_I
AaP(N1~a,N2~d,N3~d,N4~d,N5~d,b)->AaP(N1~a,N2~d,N3~d,N4~a,N5~d,b)	ka_I
AaP(N1~a,N2~d,N3~d,N4~d,N5~d,b)->AaP(N1~a,N2~d,N3~d,N4~d,N5~a,b)	ka_I
AaP(N1~a,N2~d,N3~d,N4~d,N5~d,b)->AaP(N1~a,N2~a,N3~d,N4~d,N5~d,b)	ka_I


#TF binding
Aa(b,u~a) + AaP(b) <-> AaP(b!0).Aa(b!0,u~a)	kon,koff 

As(b) + AaP(b) <-> AaP(b!0).As(b!0)	kon,koff 

#Changes due to TF binding

AaP(N1~a,N2~a,N3~a,N4~a,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~a,N3~a,N4~a,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~a,N3~a,N4~a,N5~d,b!0).As(b!0)<->AaP(N1~a,N2~a,N3~a,N4~a,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~a,N2~a,N3~a,N4~d,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~a,N3~a,N4~a,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~a,N3~a,N4~d,N5~a,b!0).As(b!0)<->AaP(N1~a,N2~a,N3~a,N4~a,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~a,N2~a,N3~d,N4~a,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~a,N3~a,N4~a,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~a,N3~d,N4~a,N5~a,b!0).As(b!0)<->AaP(N1~a,N2~a,N3~a,N4~a,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~a,N2~d,N3~a,N4~a,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~a,N3~a,N4~a,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~d,N3~a,N4~a,N5~a,b!0).As(b!0)<->AaP(N1~a,N2~a,N3~a,N4~a,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~a,N3~a,N4~a,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~a,N3~a,N4~a,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~a,N3~a,N4~a,N5~a,b!0).As(b!0)<->AaP(N1~a,N2~a,N3~a,N4~a,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~a,N3~d,N4~a,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~a,N3~d,N4~a,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~a,N3~d,N4~a,N5~a,b!0).As(b!0)<->AaP(N1~a,N2~a,N3~d,N4~a,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~a,N3~d,N4~a,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~a,N3~a,N4~a,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~a,N3~d,N4~a,N5~a,b!0).As(b!0)<->AaP(N1~d,N2~a,N3~a,N4~a,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~a,N3~a,N4~d,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~a,N3~a,N4~d,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~a,N3~a,N4~d,N5~a,b!0).As(b!0)<->AaP(N1~a,N2~a,N3~a,N4~d,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~a,N3~a,N4~d,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~a,N3~a,N4~a,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~a,N3~a,N4~d,N5~a,b!0).As(b!0)<->AaP(N1~d,N2~a,N3~a,N4~a,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~a,N3~a,N4~a,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~a,N3~a,N4~a,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~a,N3~a,N4~a,N5~d,b!0).As(b!0)<->AaP(N1~a,N2~a,N3~a,N4~a,N5~d,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~a,N3~a,N4~a,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~a,N3~a,N4~a,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~a,N3~a,N4~a,N5~d,b!0).As(b!0)<->AaP(N1~d,N2~a,N3~a,N4~a,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~d,N3~a,N4~a,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~d,N3~a,N4~a,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~d,N3~a,N4~a,N5~a,b!0).As(b!0)<->AaP(N1~a,N2~d,N3~a,N4~a,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~d,N3~a,N4~a,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~a,N3~a,N4~a,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~d,N3~a,N4~a,N5~a,b!0).As(b!0)<->AaP(N1~d,N2~a,N3~a,N4~a,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~a,N2~d,N3~d,N4~a,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~a,N3~d,N4~a,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~d,N3~d,N4~a,N5~a,b!0).As(b!0)<->AaP(N1~a,N2~a,N3~d,N4~a,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~a,N2~d,N3~d,N4~a,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~d,N3~a,N4~a,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~d,N3~d,N4~a,N5~a,b!0).As(b!0)<->AaP(N1~a,N2~d,N3~a,N4~a,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~a,N2~d,N3~a,N4~d,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~a,N3~a,N4~d,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~d,N3~a,N4~d,N5~a,b!0).As(b!0)<->AaP(N1~a,N2~a,N3~a,N4~d,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~a,N2~d,N3~a,N4~d,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~d,N3~a,N4~a,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~d,N3~a,N4~d,N5~a,b!0).As(b!0)<->AaP(N1~a,N2~d,N3~a,N4~a,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~a,N2~d,N3~a,N4~a,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~a,N3~a,N4~a,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~d,N3~a,N4~a,N5~d,b!0).As(b!0)<->AaP(N1~a,N2~a,N3~a,N4~a,N5~d,b!0).As(b!0)	tf_ka,kr
AaP(N1~a,N2~d,N3~a,N4~a,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~d,N3~a,N4~a,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~d,N3~a,N4~a,N5~d,b!0).As(b!0)<->AaP(N1~a,N2~d,N3~a,N4~a,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~a,N2~a,N3~d,N4~d,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~a,N3~a,N4~d,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~a,N3~d,N4~d,N5~a,b!0).As(b!0)<->AaP(N1~a,N2~a,N3~a,N4~d,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~a,N2~a,N3~d,N4~d,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~a,N3~d,N4~a,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~a,N3~d,N4~d,N5~a,b!0).As(b!0)<->AaP(N1~a,N2~a,N3~d,N4~a,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~a,N2~a,N3~d,N4~a,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~a,N3~a,N4~a,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~a,N3~d,N4~a,N5~d,b!0).As(b!0)<->AaP(N1~a,N2~a,N3~a,N4~a,N5~d,b!0).As(b!0)	tf_ka,kr
AaP(N1~a,N2~a,N3~d,N4~a,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~a,N3~d,N4~a,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~a,N3~d,N4~a,N5~d,b!0).As(b!0)<->AaP(N1~a,N2~a,N3~d,N4~a,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~a,N2~a,N3~a,N4~d,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~a,N3~a,N4~a,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~a,N3~a,N4~d,N5~d,b!0).As(b!0)<->AaP(N1~a,N2~a,N3~a,N4~a,N5~d,b!0).As(b!0)	tf_ka,kr
AaP(N1~a,N2~a,N3~a,N4~d,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~a,N3~a,N4~d,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~a,N3~a,N4~d,N5~d,b!0).As(b!0)<->AaP(N1~a,N2~a,N3~a,N4~d,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~a,N2~d,N3~a,N4~d,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~d,N3~a,N4~d,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~d,N3~a,N4~d,N5~d,b!0).As(b!0)<->AaP(N1~a,N2~d,N3~a,N4~d,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~a,N2~d,N3~a,N4~d,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~d,N3~a,N4~a,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~d,N3~a,N4~d,N5~d,b!0).As(b!0)<->AaP(N1~a,N2~d,N3~a,N4~a,N5~d,b!0).As(b!0)	tf_ka,kr
AaP(N1~a,N2~d,N3~a,N4~d,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~a,N3~a,N4~d,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~d,N3~a,N4~d,N5~d,b!0).As(b!0)<->AaP(N1~a,N2~a,N3~a,N4~d,N5~d,b!0).As(b!0)	tf_ka,kr
AaP(N1~a,N2~d,N3~d,N4~a,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~d,N3~d,N4~a,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~d,N3~d,N4~a,N5~d,b!0).As(b!0)<->AaP(N1~a,N2~d,N3~d,N4~a,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~a,N2~d,N3~d,N4~a,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~d,N3~a,N4~a,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~d,N3~d,N4~a,N5~d,b!0).As(b!0)<->AaP(N1~a,N2~d,N3~a,N4~a,N5~d,b!0).As(b!0)	tf_ka,kr
AaP(N1~a,N2~d,N3~d,N4~a,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~a,N3~d,N4~a,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~d,N3~d,N4~a,N5~d,b!0).As(b!0)<->AaP(N1~a,N2~a,N3~d,N4~a,N5~d,b!0).As(b!0)	tf_ka,kr
AaP(N1~a,N2~d,N3~d,N4~d,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~d,N3~d,N4~a,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~d,N3~d,N4~d,N5~a,b!0).As(b!0)<->AaP(N1~a,N2~d,N3~d,N4~a,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~a,N2~d,N3~d,N4~d,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~d,N3~a,N4~d,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~d,N3~d,N4~d,N5~a,b!0).As(b!0)<->AaP(N1~a,N2~d,N3~a,N4~d,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~a,N2~d,N3~d,N4~d,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~a,N3~d,N4~d,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~d,N3~d,N4~d,N5~a,b!0).As(b!0)<->AaP(N1~a,N2~a,N3~d,N4~d,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~a,N2~a,N3~d,N4~d,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~a,N3~d,N4~d,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~a,N3~d,N4~d,N5~d,b!0).As(b!0)<->AaP(N1~a,N2~a,N3~d,N4~d,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~a,N2~a,N3~d,N4~d,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~a,N3~d,N4~a,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~a,N3~d,N4~d,N5~d,b!0).As(b!0)<->AaP(N1~a,N2~a,N3~d,N4~a,N5~d,b!0).As(b!0)	tf_ka,kr
AaP(N1~a,N2~a,N3~d,N4~d,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~a,N3~a,N4~d,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~a,N3~d,N4~d,N5~d,b!0).As(b!0)<->AaP(N1~a,N2~a,N3~a,N4~d,N5~d,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~a,N3~a,N4~d,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~a,N3~a,N4~d,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~a,N3~a,N4~d,N5~d,b!0).As(b!0)<->AaP(N1~d,N2~a,N3~a,N4~d,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~a,N3~a,N4~d,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~a,N3~a,N4~a,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~a,N3~a,N4~d,N5~d,b!0).As(b!0)<->AaP(N1~d,N2~a,N3~a,N4~a,N5~d,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~a,N3~a,N4~d,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~a,N3~a,N4~d,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~a,N3~a,N4~d,N5~d,b!0).As(b!0)<->AaP(N1~a,N2~a,N3~a,N4~d,N5~d,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~a,N3~d,N4~a,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~a,N3~d,N4~a,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~a,N3~d,N4~a,N5~d,b!0).As(b!0)<->AaP(N1~d,N2~a,N3~d,N4~a,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~a,N3~d,N4~a,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~a,N3~a,N4~a,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~a,N3~d,N4~a,N5~d,b!0).As(b!0)<->AaP(N1~d,N2~a,N3~a,N4~a,N5~d,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~a,N3~d,N4~a,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~a,N3~d,N4~a,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~a,N3~d,N4~a,N5~d,b!0).As(b!0)<->AaP(N1~a,N2~a,N3~d,N4~a,N5~d,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~a,N3~d,N4~d,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~a,N3~d,N4~a,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~a,N3~d,N4~d,N5~a,b!0).As(b!0)<->AaP(N1~d,N2~a,N3~d,N4~a,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~a,N3~d,N4~d,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~a,N3~a,N4~d,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~a,N3~d,N4~d,N5~a,b!0).As(b!0)<->AaP(N1~d,N2~a,N3~a,N4~d,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~a,N3~d,N4~d,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~a,N3~d,N4~d,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~a,N3~d,N4~d,N5~a,b!0).As(b!0)<->AaP(N1~a,N2~a,N3~d,N4~d,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~d,N3~a,N4~a,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~a,N3~a,N4~a,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~d,N3~a,N4~a,N5~d,b!0).As(b!0)<->AaP(N1~d,N2~a,N3~a,N4~a,N5~d,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~d,N3~a,N4~a,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~d,N3~a,N4~a,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~d,N3~a,N4~a,N5~d,b!0).As(b!0)<->AaP(N1~d,N2~d,N3~a,N4~a,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~d,N3~a,N4~a,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~d,N3~a,N4~a,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~d,N3~a,N4~a,N5~d,b!0).As(b!0)<->AaP(N1~a,N2~d,N3~a,N4~a,N5~d,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~d,N3~a,N4~d,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~a,N3~a,N4~d,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~d,N3~a,N4~d,N5~a,b!0).As(b!0)<->AaP(N1~d,N2~a,N3~a,N4~d,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~d,N3~a,N4~d,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~d,N3~a,N4~a,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~d,N3~a,N4~d,N5~a,b!0).As(b!0)<->AaP(N1~d,N2~d,N3~a,N4~a,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~d,N3~a,N4~d,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~d,N3~a,N4~d,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~d,N3~a,N4~d,N5~a,b!0).As(b!0)<->AaP(N1~a,N2~d,N3~a,N4~d,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~a,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~a,N3~d,N4~a,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~a,N5~a,b!0).As(b!0)<->AaP(N1~d,N2~a,N3~d,N4~a,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~a,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~d,N3~a,N4~a,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~a,N5~a,b!0).As(b!0)<->AaP(N1~d,N2~d,N3~a,N4~a,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~a,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~d,N3~d,N4~a,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~a,N5~a,b!0).As(b!0)<->AaP(N1~a,N2~d,N3~d,N4~a,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~a,N3~d,N4~d,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~a,N3~d,N4~d,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~a,N3~d,N4~d,N5~d,b!0).As(b!0)<->AaP(N1~a,N2~a,N3~d,N4~d,N5~d,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~a,N3~d,N4~d,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~a,N3~a,N4~d,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~a,N3~d,N4~d,N5~d,b!0).As(b!0)<->AaP(N1~d,N2~a,N3~a,N4~d,N5~d,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~a,N3~d,N4~d,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~a,N3~d,N4~a,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~a,N3~d,N4~d,N5~d,b!0).As(b!0)<->AaP(N1~d,N2~a,N3~d,N4~a,N5~d,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~a,N3~d,N4~d,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~a,N3~d,N4~d,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~a,N3~d,N4~d,N5~d,b!0).As(b!0)<->AaP(N1~d,N2~a,N3~d,N4~d,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~d,N3~a,N4~d,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~d,N3~a,N4~d,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~d,N3~a,N4~d,N5~d,b!0).As(b!0)<->AaP(N1~a,N2~d,N3~a,N4~d,N5~d,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~d,N3~a,N4~d,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~a,N3~a,N4~d,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~d,N3~a,N4~d,N5~d,b!0).As(b!0)<->AaP(N1~d,N2~a,N3~a,N4~d,N5~d,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~d,N3~a,N4~d,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~d,N3~a,N4~a,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~d,N3~a,N4~d,N5~d,b!0).As(b!0)<->AaP(N1~d,N2~d,N3~a,N4~a,N5~d,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~d,N3~a,N4~d,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~d,N3~a,N4~d,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~d,N3~a,N4~d,N5~d,b!0).As(b!0)<->AaP(N1~d,N2~d,N3~a,N4~d,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~a,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~d,N3~d,N4~a,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~a,N5~d,b!0).As(b!0)<->AaP(N1~a,N2~d,N3~d,N4~a,N5~d,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~a,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~a,N3~d,N4~a,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~a,N5~d,b!0).As(b!0)<->AaP(N1~d,N2~a,N3~d,N4~a,N5~d,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~a,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~d,N3~a,N4~a,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~a,N5~d,b!0).As(b!0)<->AaP(N1~d,N2~d,N3~a,N4~a,N5~d,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~a,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~d,N3~d,N4~a,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~a,N5~d,b!0).As(b!0)<->AaP(N1~d,N2~d,N3~d,N4~a,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~d,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~d,N3~d,N4~d,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~d,N5~a,b!0).As(b!0)<->AaP(N1~a,N2~d,N3~d,N4~d,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~d,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~a,N3~d,N4~d,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~d,N5~a,b!0).As(b!0)<->AaP(N1~d,N2~a,N3~d,N4~d,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~d,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~d,N3~a,N4~d,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~d,N5~a,b!0).As(b!0)<->AaP(N1~d,N2~d,N3~a,N4~d,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~d,N5~a,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~d,N3~d,N4~a,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~d,N5~a,b!0).As(b!0)<->AaP(N1~d,N2~d,N3~d,N4~a,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~a,N2~d,N3~d,N4~d,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~d,N3~a,N4~d,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~d,N3~d,N4~d,N5~d,b!0).As(b!0)<->AaP(N1~a,N2~d,N3~a,N4~d,N5~d,b!0).As(b!0)	tf_ka,kr
AaP(N1~a,N2~d,N3~d,N4~d,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~d,N3~d,N4~a,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~d,N3~d,N4~d,N5~d,b!0).As(b!0)<->AaP(N1~a,N2~d,N3~d,N4~a,N5~d,b!0).As(b!0)	tf_ka,kr
AaP(N1~a,N2~d,N3~d,N4~d,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~d,N3~d,N4~d,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~d,N3~d,N4~d,N5~d,b!0).As(b!0)<->AaP(N1~a,N2~d,N3~d,N4~d,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~a,N2~d,N3~d,N4~d,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~a,N3~d,N4~d,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~a,N2~d,N3~d,N4~d,N5~d,b!0).As(b!0)<->AaP(N1~a,N2~a,N3~d,N4~d,N5~d,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~d,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~a,N3~d,N4~d,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~d,N5~d,b!0).As(b!0)<->AaP(N1~d,N2~a,N3~d,N4~d,N5~d,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~d,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~d,N3~a,N4~d,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~d,N5~d,b!0).As(b!0)<->AaP(N1~d,N2~d,N3~a,N4~d,N5~d,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~d,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~d,N3~d,N4~a,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~d,N5~d,b!0).As(b!0)<->AaP(N1~d,N2~d,N3~d,N4~a,N5~d,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~d,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~d,N2~d,N3~d,N4~d,N5~a,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~d,N5~d,b!0).As(b!0)<->AaP(N1~d,N2~d,N3~d,N4~d,N5~a,b!0).As(b!0)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~d,N5~d,b!0).Aa(b!0,u~a)<->AaP(N1~a,N2~d,N3~d,N4~d,N5~d,b!0).Aa(b!0,u~a)	tf_ka,kr
AaP(N1~d,N2~d,N3~d,N4~d,N5~d,b!0).As(b!0)<->AaP(N1~a,N2~d,N3~d,N4~d,N5~d,b!0).As(b!0)	tf_ka,kr


AaP(b!0,N1~a,N2~a,N3~a,N4~a,N5~a).Aa(b!0,u~a) -> AaP(b!0,N1~a,N2~a,N3~a,N4~a,N5~a).Aa(b!0,u~a) + RNA_Aa() TR_Aa 
AaP(b!0,N1~a,N2~a,N3~a,N4~a,N5~a).As(b!0) -> AaP(b!0,N1~a,N2~a,N3~a,N4~a,N5~a).As(b!0) + RNA_Aa() TR_Aa 

################################################################
RP(b,N1~d,N2~d) <-> RP(b,N1~a,N2~d) ka,kr
RP(b,N1~d,N2~d) <-> RP(b,N1~d,N2~a) ka,kr
RP(b,N1~a,N2~d) <-> RP(b,N1~a,N2~a) ka,kr
RP(b,N1~d,N2~a) <-> RP(b,N1~a,N2~a) ka,kr



RP(b,N1~a,N2~d) -> RP(b,N1~a,N2~a) ka_I
RP(b,N1~d,N2~a) -> RP(b,N1~a,N2~a) ka_I

RP(b,N1~a,N2~d) -> RP(b,N1~d,N2~d) kr
RP(b,N1~d,N2~a) -> RP(b,N1~d,N2~d) kr

#TF binding
RP(b) + Aa(b,u~a) <-> RP(b!0).Aa(b!0,u~a)	konR, koffR

RP(b) + As(b) <-> RP(b!0).As(b!0)	konR, koffR 



#Nucleosomes state change given binding of TF

RP(b!0,N1~a,N2~a).Aa(b!0,u~a) <-> RP(b!0,N1~d,N2~a).Aa(b!0,u~a) kr,tf_ka
RP(b!0,N1~a,N2~a).Aa(b!0,u~a) <-> RP(b!0,N1~a,N2~d).Aa(b!0,u~a) kr,tf_ka
RP(b!0,N1~d,N2~d).Aa(b!0,u~a) <-> RP(b!0,N1~d,N2~a).Aa(b!0,u~a) tf_ka,kr
RP(b!0,N1~d,N2~d).Aa(b!0,u~a) <-> RP(b!0,N1~a,N2~d).Aa(b!0,u~a) tf_ka,kr

RP(b!0,N1~a,N2~a).As(b!0) <-> RP(b!0,N1~d,N2~a).As(b!0) kr,tf_ka
RP(b!0,N1~a,N2~a).As(b!0) <-> RP(b!0,N1~a,N2~d).As(b!0) kr,tf_ka
RP(b!0,N1~d,N2~d).As(b!0) <-> RP(b!0,N1~d,N2~a).As(b!0) tf_ka,kr
RP(b!0,N1~d,N2~d).As(b!0) <-> RP(b!0,N1~a,N2~d).As(b!0) tf_ka,kr



#################################################################


	AaP(b) -> AaP(b) + RNA_Aa() s
                           
	RNA_Aa()  -> RNA_Aa() + Aa(b,u~i) k_prod_Aa
	
	Aa(b,u~i) <-> Aa(b,u~a) k_act,k_inact
#Degradation reactions
	RNA_Aa() -> Trash() k_degrRNA  #RNAs are degradated much faster than proteins

	Aa(b) -> Trash() k_degr 	

	As(b) -> Trash() k_degr 
	
	Aa().AaP() -> AaP() k_degr DeleteMolecules
	
	As().AaP() -> AaP() k_degr DeleteMolecules  
	
	Aa().RP() -> RP() k_degr DeleteMolecules
	
	As().RP() -> RP() k_degr DeleteMolecules 

##########################################################################################################################

end reaction rules


end model


#ACTIONS

generate_network({overwrite=>1});




simulate_ode({t_end=>1440,n_steps=>1440}); #Use ODE (stiff dynamic algorithm) end at 1080 min, time step size 1.08
#simulate_ssa({t_end=>3000,n_steps=>1000});

