# Retroactivity model made in the Basic BNGL Model 

#testing epigenetic combinatory

####################################################

#This model INCLUDES an insulation device proposal, achieved in an OPAMP way.

#Transcription iniciation of the device is achieved by the same signal that induces the ori-

#ginal module

####################################################

begin model

begin parameters

	k_act 3600*60
	k_inact 18*60
   
   	s 0.1
	
	
	koff 1e-11 #0.045*60#0.13*60#Disociation rate for lexA domain to the Aa promoter
	kon 1e-9 #0.0225*60*1e-9*6.022e23*42e-15#koff/20#Asociation rate for lexA domain to the Aa promoter
	
	tau 120 #Yeast duplication time

	k_degr log(2)/tau#degradation rate according to Ajo-Franco et al log(2)/tau
	k_degrRNA log(2)/15# Yeast is Quantification of protein half-lives in the budding yeast proteome Archana Belle et al. PNAS
	
    #Aa related#########################################################################################################

	#Epigenetics
	#Non TF present
	kr 0.001387508
	ka 0.000265988
	ka_I ka*100
	kr_I ka_I*2
	tf_ka  ka_I*100 # much bigger than mean rate of histone  conversion between U and A forms or from M to U form due to TF 
	                 # per min http://www.jbc.org/content/285/5/3341/T2.expansion.html por el de metilaci�n (cambiandolo por acetilaci�n)
					 #tf stands for transcription factor
	
	k_prod_Aa 0.69 #production constant from mRNA (translation)
	TR_Aa 14.4*10#28.97*1000/(6.023e23*42e-15*1e-9)#rate of transcription from As(r!0).AaP(l!0,q~b) or Aa(r!0).AaP(l!0,q~b)binding 
					#28.97 was consideren for constitutive trasncription (similar to AJo-Franco and cols)
					#Here we are not including such basal transcription (may be important for further models

	TR_ret TR_Aa

	koffR koff*2^-5#1e-11#1e-7
	kdR (koff/kon)*2^-5#(koff/kon)/1000#1e-6#(koff/kon)/10
	konR koffR/kdR


	kr_Ret kr
	ka_Ret   ka
	ka_I_ret ka_I
	kr_I_ret kr_I
   

end parameters


begin molecule types

	#Isolated

	#RNA_Ret()
	
	RNA_Aa()

	As(b,u~i~a) #Signaling component it has one DNA binding site l

	Aa(b,u~i~a) #Autoactivator it has also one DNA binding site to its own promoter

	AaP(H1~U~M~A,H2~U~M~A,H3~U~M~A,H4~U~M~A,H5~U~M~A,b)  #Autoactivator promoter has 8 potential sites to be bound by TF. A single binding can change the whole promoter to an active transcription form

	RetP(H1~U~M~A,H2~U~M~A,H3~U~M~A,b)
	
	#Ret(b)
	
	Trash() 
	

end molecule types


begin seed species

	#Isolated

	

	AaP(H1~M,H2~M,H3~M,H4~M,H5~M,b) 2

    	#RNA_Ret() 0
	
	RNA_Aa() 0

	As(b,u~a) 100000

	Aa(b,u~i) 0
	
	RetP(H1~M,H2~M,H3~M,b) 300
	
	Trash()  0
	
	#Ret(b)	0



end  seed species




begin observables


#Molecules Complex AaP(H1~A,H2~A,H3~A,H4~A,b!0).As(b!0,u~a)

Molecules Aa Aa(b)

Molecules As As(b)

end observables




begin reaction rules

##################################################################

#Epigenetic game
#Non TF
#random
AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b)	kr
AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b)	kr
AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b)	kr
AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b)	ka
AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b)	ka
AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b)	kr
AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b)	kr
AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b)	kr
AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b)	kr
AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b)	ka
AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b)	ka
AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b)	kr
AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b)	kr
AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b)	kr
AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b)	kr
AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b)	ka
AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b)	ka
AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b)	kr
AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b)	kr
AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b)	kr
AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b)	kr
AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b)	ka
AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b)->AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b)	ka
AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b)	kr
AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b)	kr
AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b)	kr
AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b)	kr
AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b)	ka
AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b)	ka
AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b)	kr
AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b)	kr
AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b)	kr
AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b)	kr
AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b)	ka
AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b)	ka
AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b)	kr
AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b)	kr
AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b)	kr
AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b)	kr
AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b)	ka
AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b)	ka
AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b)	kr
AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b)	kr
AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b)	kr
AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b)	kr
AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b)	ka
AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b)	ka
AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b)	kr
AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b)	kr
AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b)	kr
AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b)	kr
AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b)	ka
AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b)	ka
AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b)	kr
AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b)	kr
AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b)	kr
AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b)	kr
AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b)	ka
AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b)	ka
AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b)	kr
AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b)	kr
AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b)	kr
AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b)	kr
AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b)	ka
AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b)	ka
AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b)	kr
AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b)	kr
AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b)	kr
AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b)	kr
AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b)	ka
AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b)	ka
AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b)	kr
AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b)	kr
AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b)	kr
AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b)	kr
AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b)	ka
AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b)	ka
AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b)	kr
AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b)	kr
AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b)	kr
AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b)	kr
AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b)	ka
AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b)	ka
AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b)	kr
AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b)	kr
AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b)	kr
AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b)	kr
AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b)	ka
AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b)	ka
AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b)	kr
AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b)	kr
AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b)	kr
AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b)	kr
AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b)	ka
AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b)	ka
AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b)	kr
AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b)	kr
AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b)	kr
AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b)	kr
AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b)	ka
AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b)	ka
AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b)	kr
AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b)	kr
AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b)	kr
AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b)	kr
AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b)	ka
AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b)	ka
AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b)	kr
AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b)	kr
AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b)	kr
AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b)	kr
AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b)	ka
AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b)	ka
AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b)	kr
AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b)	kr
AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b)	kr
AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b)	kr
AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b)	ka
AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b)	ka
AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b)	kr
AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b)	ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b)	ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b)	kr
AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b)	kr
AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b)	kr
AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b)	kr
AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b)	ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b)	ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b)	ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b)	kr
AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b)	kr
AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b)	kr
AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b)	kr
AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b)	ka
AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b)	ka
AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b)	ka
AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b)	kr
AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b)	kr
AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b)	kr
AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b)	kr
AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b)	ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b)	ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b)	ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b)	kr
AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b)	kr
AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b)	kr
AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b)	kr
AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b)	ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b)	ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b)	ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b)	kr
AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b)	kr
AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b)	kr
AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b)	kr
AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b)	ka
AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b)	ka
AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b)	ka
AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b)	kr
AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b)	kr
AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b)	kr
AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b)	kr
AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b)	ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b)	ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b)	ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b)	kr
AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b)	kr
AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b)	kr
AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b)	kr
AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b)	ka
AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b)	ka
AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b)	ka
AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b)	kr
AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b)	kr
AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b)	kr
AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b)	kr
AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b)	ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b)	ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b)	ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b)	kr
AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b)	kr
AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b)	kr
AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b)	kr
AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b)	ka
AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b)	ka
AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b)	ka
AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b)	kr
AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b)	kr
AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b)	kr
AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b)	kr
AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b)	ka
AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b)	ka
AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b)	ka
AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b)	kr
AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b)	kr
AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b)	kr
AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b)	kr
AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b)	ka
AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b)	ka
AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b)	ka
AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b)	kr
AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b)	kr
AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b)	kr
AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b)	kr
AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b)	ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b)	ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b)	ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b)	kr
AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b)	kr
AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b)	kr
AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b)	kr
AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b)	ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b)	ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b)	ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b)	kr
AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b)	kr
AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b)	kr
AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b)	kr
AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b)	ka
AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b)	ka
AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b)	ka
AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b)	kr
AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b)	kr
AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b)	kr
AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b)	kr
AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b)	ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b)	ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b)	ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b)	kr
AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b)	kr
AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b)	kr
AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b)	kr
AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b)	ka
AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b)	ka
AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b)	ka
AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b)	kr
AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b)	kr
AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b)	kr
AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b)	kr
AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b)	ka
AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b)	ka
AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b)	ka
AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b)	kr
AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b)	kr
AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b)	kr
AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b)	kr
AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b)	ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b)	ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b)	ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b)	kr
AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b)	kr
AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b)	kr
AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b)	kr
AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b)	ka
AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b)	ka
AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b)	ka
AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b)	kr
AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b)	kr
AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b)	kr
AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b)	kr
AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b)	ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b)	ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b)	ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b)	kr
AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b)	kr
AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b)	kr
AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b)	kr
AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b)	ka
AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b)	ka
AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b)	ka
AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b)	kr
AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b)	kr
AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b)	kr
AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b)	kr
AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b)	ka
AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b)	ka
AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b)	ka
AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b)	kr
AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b)	kr
AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b)	kr
AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b)	kr
AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b)	ka
AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b)	ka
AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b)	ka
AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b)	kr
AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b)	kr
AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b)	kr
AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b)	kr
AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b)	ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b)	ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b)	ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b)	kr
AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b)	kr
AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b)	kr
AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b)	kr
AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b)	ka
AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b)	ka
AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b)	ka
AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b)	kr
AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b)	kr
AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b)	kr
AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b)	kr
AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b)	ka
AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b)	ka
AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b)	ka
AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b)	kr
AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b)	kr
AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b)	kr
AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b)	kr
AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b)	ka
AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b)	ka
AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b)	ka
AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b)	kr
AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b)	kr
AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b)	kr
AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b)	kr
AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b)	ka
AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b)	ka
AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b)	ka
AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b)	kr
AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b)	kr
AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b)	kr
AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b)	kr
AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b)	ka
AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b)	ka
AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b)	ka
AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b)	kr
AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b)	kr
AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b)	kr
AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b)	kr
AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b)	ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b)	ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b)	ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b)	kr
AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b)	kr
AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b)	ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b)	kr
AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b)	ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b)	ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b)	kr
AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b)	kr
AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b)	ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b)	kr
AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b)	ka
AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b)	ka
AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b)	kr
AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b)	kr
AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b)	ka
AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b)	kr
AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b)	ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b)	ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b)	kr
AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b)	kr
AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b)	ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b)	kr
AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b)	ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b)	ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b)	kr
AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b)	kr
AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b)	ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b)	kr
AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b)	ka
AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b)	ka
AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b)	kr
AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b)	kr
AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b)	ka
AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b)	kr
AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b)	ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b)	ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b)	kr
AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b)	kr
AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b)	ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b)	kr
AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b)	ka
AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b)	ka
AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b)	kr
AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b)	kr
AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b)	ka
AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b)	kr
AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b)	ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b)	ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b)	kr
AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b)	kr
AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b)	ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b)	kr
AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b)	ka
AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b)	ka
AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b)	kr
AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b)	kr
AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b)	ka
AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b)	kr
AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b)	ka
AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b)	ka
AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b)	kr
AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b)	kr
AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b)	ka
AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b)	kr
AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b)	ka
AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b)	ka
AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b)	kr
AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b)	kr
AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b)	ka
AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b)	kr
AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b)	ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b)	ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b)	kr
AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b)	kr
AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b)	ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b)	kr
AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b)	ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b)	ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b)	kr
AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b)	kr
AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b)	ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b)	kr
AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b)	ka
AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b)	ka
AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b)	kr
AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b)	kr
AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b)	ka
AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b)	kr
AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b)	ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b)	ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b)	kr
AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b)	kr
AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b)	ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b)	kr
AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b)	ka
AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b)	ka
AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b)	kr
AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b)	kr
AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b)	ka
AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b)	kr
AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b)	ka
AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b)	ka
AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b)	kr
AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b)	kr
AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b)	ka
AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b)	kr
AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b)	ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b)	ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b)	kr
AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b)	kr
AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b)	ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b)	kr
AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b)	ka
AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b)	ka
AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b)	kr
AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b)	kr
AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b)	ka
AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b)	kr
AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b)	ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b)	ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b)	kr
AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b)	kr
AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b)	ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b)	kr
AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b)	ka
AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b)	ka
AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b)	kr
AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b)	kr
AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b)	ka
AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b)	kr
AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b)	ka
AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b)	ka
AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b)	kr
AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b)	kr
AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b)	ka
AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b)	kr
AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b)	ka
AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b)	ka
AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b)	kr
AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b)	kr
AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b)	ka
AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b)	kr
AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b)	ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b)	ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b)	kr
AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b)	kr
AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b)	ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b)	kr
AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b)	ka
AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b)	ka
AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b)	kr
AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b)	kr
AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b)	ka
AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b)	kr
AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b)	ka
AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b)	ka
AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b)	kr
AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b)	kr
AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b)	ka
AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b)	kr
AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b)	ka
AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b)	ka
AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b)	kr
AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b)	kr
AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b)	ka
AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b)	kr
AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b)	ka
AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b)	ka
AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b)	kr
AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b)	kr
AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b)	ka
AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b)	kr
AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b)	ka
AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b)	ka
AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b)	kr
AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b)	kr
AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b)	ka
AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b)	kr
AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b)	ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b)	ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b)	ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b)	kr
AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b)	kr
AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b)	kr
AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b)	kr
AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b)	ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b)	ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b)	ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b)	ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b)	kr
AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b)	kr
AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b)	kr
AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b)	kr
AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b)	ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b)	ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b)	ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b)	ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b)	kr
AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b)	kr
AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b)	kr
AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b)	kr
AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b)	ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b)	ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b)	ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b)	ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b)	kr
AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b)	kr
AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b)	kr
AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b)	kr
AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b)	ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b)	ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b)	ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b)	ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b)	kr
AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b)	kr
AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b)	kr
AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b)	kr
AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b)	ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b)	ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b)	ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b)	ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b)	kr
AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b)	kr
AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b)	kr
AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b)	kr
AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b)	ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b)	ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b)	ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b)	ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b)	kr
AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b)	kr
AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b)	kr
AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b)	kr
AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b)	ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b)	ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b)	ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b)	ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b)	kr
AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b)	kr
AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b)	kr
AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b)	kr
AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b)	ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b)	ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b)	ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b)	ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b)	kr
AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b)	kr
AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b)	kr
AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b)	kr
AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b)	ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b)	ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b)	ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b)	ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b)	kr
AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b)	kr
AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b)	kr
AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b)	kr
AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b)	ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b)	ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b)	ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b)	ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b)	kr
AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b)	kr
AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b)	kr
AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b)	kr
AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b)	ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b)	ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b)	ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b)	ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b)	kr
AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b)	kr
AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b)	kr
AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b)	kr
AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b)	ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b)	ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b)	ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b)	ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b)	kr
AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b)	kr
AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b)	kr
AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b)	kr
AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b)	ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b)	ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b)	ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b)	ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b)	kr
AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b)	kr
AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b)	kr
AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b)	kr
AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b)	ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b)	ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b)	ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b)	ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b)	kr
AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b)	kr
AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b)	kr
AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b)	kr
AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b)	ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b)	ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b)	ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b)	ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b)	kr
AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b)	kr
AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b)	kr
AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b)	kr
AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b)	ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b)	ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b)	ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b)	ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b)	kr
AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b)	kr
AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b)	kr
AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b)	kr
AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b)	ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b)	ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b)	ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b)	ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b)	kr
AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b)	kr
AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b)	kr
AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b)	kr
AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b)	ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b)	ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b)	ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b)	ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b)	kr
AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b)	kr
AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b)	kr
AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b)	kr
AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b)	ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b)	ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b)	ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b)	ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b)	kr
AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b)	kr
AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b)	kr
AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b)	kr
AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b)	ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b)	ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b)	ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b)	ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b)	ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b)	kr
AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b)	kr
AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b)	kr
AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b)	ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b)	ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b)	ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b)	ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b)	kr
AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b)	kr
AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b)	kr
AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b)	ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b)	ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b)	ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b)	ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b)	kr
AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b)	kr
AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b)	kr
AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b)	ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b)	ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b)	ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b)	ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b)	kr
AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b)	kr
AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b)	kr
AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b)	ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b)	ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b)	ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b)	ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b)	kr
AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b)	kr
AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b)	kr
AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b)	ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b)	ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b)	ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b)	ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b)	kr
AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b)	kr
AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b)	kr
AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b)	ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b)	ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b)	ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b)	ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b)	kr
AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b)	kr
AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b)	kr
AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b)	ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b)	ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b)	ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b)	ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b)	kr
AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b)	kr
AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b)	kr
AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b)	ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b)	ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b)	ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b)	ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b)	kr
AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b)	kr
AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b)	kr
AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b)	ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b)	ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b)	ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b)	ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b)	kr
AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b)	kr
AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b)	kr
AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b)	ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b)	ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b)	ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b)	ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b)	kr
AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b)	kr
AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b)	kr
AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b)	ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b)	ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b)	ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b)	ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b)	kr
AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b)	kr
AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b)	kr
AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b)	ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b)	ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b)	ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b)	ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b)	kr
AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b)	kr
AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b)	kr
AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b)	ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b)	ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b)	ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b)	ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b)	kr
AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b)	kr
AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b)	kr
AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b)	ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b)	ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b)	ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b)	ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b)	kr
AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b)	kr
AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b)	kr
AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b)	ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b)	ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b)	ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b)	ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b)	kr
AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b)	kr
AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b)	kr
AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b)	ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b)	ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b)	ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b)	ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b)	kr
AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b)	kr
AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b)	kr
AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b)	ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b)	ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b)	ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b)	ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b)	kr
AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b)	kr
AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b)	kr
AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b)	ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b)	ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b)	ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b)	ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b)	kr
AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b)	kr
AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b)	kr
AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b)	ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b)	ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b)	ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b)	ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b)	kr
AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b)	kr
AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b)	kr
AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b)	ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b)	ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b)	ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b)	ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b)	kr
AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b)	kr
AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b)	kr
AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b)	ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b)	ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b)	ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b)	ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b)	kr
AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b)	kr
AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b)	kr
AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b)	ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b)	ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b)	ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b)	ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b)	kr
AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b)	kr
AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b)	kr
AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b)	ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b)	ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b)	ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b)	ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b)	kr
AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b)	kr
AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b)	kr
AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b)	ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b)	ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b)	ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b)	ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b)	kr
AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b)	kr
AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b)	kr
AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b)	ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b)	ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b)	ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b)	ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b)	kr
AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b)	kr
AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b)	kr
AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b)	ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b)	ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b)	ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b)	ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b)	kr
AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b)	kr
AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b)	kr
AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b)	ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b)	ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b)	ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b)	ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b)	kr
AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b)	kr
AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b)	kr
AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b)	ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b)	ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b)	ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b)	ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b)	kr
AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b)	kr
AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b)	kr
AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b)	ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b)	ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b)	ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b)	ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b)	kr
AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b)	kr
AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b)	kr
AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b)	ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b)	ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b)	ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b)	kr
AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b)	ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b)	kr
AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b)	ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b)	ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b)	ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b)	kr
AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b)	ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b)	kr
AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b)	ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b)	ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b)	ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b)	kr
AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b)	ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b)	kr
AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b)	ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b)	ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b)	ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b)	kr
AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b)	ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b)	kr
AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b)	ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b)	ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b)	ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b)	kr
AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b)	ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b)	kr
AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b)	ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b)	ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b)	ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b)	kr
AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b)	ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b)	kr
AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b)	ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b)	ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b)	ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b)	kr
AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b)	ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b)	kr
AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b)	ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b)	ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b)	ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b)	kr
AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b)	ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b)	kr
AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b)	ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b)	ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b)	ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b)	kr
AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b)	ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b)	kr
AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b)	ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b)	ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b)	ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b)	kr
AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b)	ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b)	kr
AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b)	ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b)	ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b)	ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b)	kr
AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b)	ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b)	kr
AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b)	ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b)	ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b)	ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b)	kr
AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b)	ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b)	kr
AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b)	ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b)	ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b)	ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b)	kr
AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b)	ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b)	kr
AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b)	ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b)	ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b)	ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b)	kr
AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b)	ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b)	kr
AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b)	ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b)	ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b)	ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b)	kr
AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b)	ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b)	kr
AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b)	ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b)	ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b)	ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b)	kr
AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b)	ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b)	kr
AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b)	ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b)	ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b)	ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b)	kr
AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b)	ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b)	kr
AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b)	ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b)	ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b)	ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b)	kr
AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b)	ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b)	kr
AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b)	ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b)	ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b)	ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b)	kr
AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b)	ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b)	kr
AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b)	ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b)	ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b)	ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b)	kr
AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b)	ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b)->AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b)	kr
AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b)	ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b)	ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b)	ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b)	ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b)	kr
AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b)	kr
AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b)	kr
AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b)	kr
AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b)	ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b)	ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b)	ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b)	ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b)	ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b)	kr
AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b)	kr
AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b)	kr
AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b)	kr
AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b)	ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b)	ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b)	ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b)	ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b)	ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b)	kr
AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b)	kr
AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b)	kr
AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b)	kr
AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b)	ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b)	ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b)	ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b)	ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b)	ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b)	kr
AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b)	kr
AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b)	kr
AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b)	kr
AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b)	ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b)	ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b)	ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b)	ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b)	ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b)	kr
AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b)	kr
AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b)	kr
AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b)	kr
AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b)	ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b)	ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b)	ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b)	ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b)	ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b)	ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b)	kr
AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b)	kr
AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b)	kr
AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b)	ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b)	ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b)	ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b)	ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b)	ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b)	kr
AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b)	kr
AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b)	kr
AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b)	ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b)	ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b)	ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b)	ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b)	ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b)	kr
AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b)	kr
AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b)	kr
AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b)	ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b)	ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b)	ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b)	ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b)	ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b)	kr
AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b)	kr
AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b)	kr
AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b)	ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b)	ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b)	ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b)	ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b)	ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b)	kr
AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b)	kr
AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b)	kr
AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b)	ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b)	ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b)	ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b)	ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b)	ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b)	kr
AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b)	kr
AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b)	kr
AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b)	ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b)	ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b)	ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b)	ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b)	ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b)	kr
AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b)	kr
AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b)	kr
AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b)	ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b)	ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b)	ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b)	ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b)	ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b)	kr
AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b)	kr
AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b)	kr
AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b)	ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b)	ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b)	ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b)	ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b)	ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b)	kr
AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b)	kr
AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b)	kr
AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b)	ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b)	ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b)	ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b)	ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b)	ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b)	kr
AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b)	kr
AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b)	kr
AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b)	ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b)	ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b)	ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b)	ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b)	ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b)	kr
AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b)	kr
AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b)	ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b)	ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b)	ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b)	ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b)	ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b)	kr
AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b)	kr
AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b)	ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b)	ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b)	ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b)	ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b)	ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b)	kr
AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b)	kr
AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b)	ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b)	ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b)	ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b)	ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b)	ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b)	kr
AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b)	kr
AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b)	ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b)	ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b)	ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b)	ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b)	ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b)	kr
AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b)	kr
AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b)	ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b)	ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b)	ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b)	ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b)	ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b)	kr
AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b)	kr
AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b)	ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b)	ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b)	ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b)	ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b)	ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b)	kr
AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b)	kr
AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b)	ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b)	ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b)	ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b)	ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b)	ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b)	kr
AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b)	kr
AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b)	ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b)	ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b)	ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b)	ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b)	ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b)	kr
AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b)	kr
AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b)	ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b)	ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b)	ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b)	ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b)	ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b)	kr
AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b)	kr
AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b)	ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b)	ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b)	ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b)	ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b)	ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~M,H5~M,b)	kr
AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b)	ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b)	ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b)	ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b)	ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b)	ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~M,H4~M,H5~M,b)	kr
AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b)	ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b)	ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b)	ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b)	ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b)->AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b)	ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b)->AaP(H1~M,H2~M,H3~M,H4~M,H5~M,b)	kr
AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b)	ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b)	ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b)	ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b)	ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b)->AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b)	ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b)->AaP(H1~M,H2~M,H3~M,H4~M,H5~M,b)	kr
AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b)	ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b)	ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b)	ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b)	ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b)->AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b)	ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b)->AaP(H1~M,H2~M,H3~M,H4~M,H5~M,b)	kr
AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b)	kr
AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b)	kr
AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b)	kr
AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b)	kr
AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b)->AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b)	kr
AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b)->AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b)	ka
AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b)	kr
AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b)	kr
AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b)	kr
AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b)	kr
AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b)->AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b)	kr
AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b)->AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b)	ka
AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b)	kr
AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b)	kr
AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b)	kr
AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b)	kr
AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b)->AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b)	kr
AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b)->AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b)	ka
AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b)	kr
AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b)	kr
AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b)	kr
AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b)	kr
AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b)	kr
AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b)	ka
AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b)	kr
AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b)	kr
AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b)	kr
AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b)	kr
AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b)	kr
AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b)	ka
AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b)	kr
AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b)	kr
AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b)	ka
AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b)	ka
AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b)	kr
AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b)	kr
AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b)	kr
AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b)	kr
AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b)	kr
AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b)	ka
AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b)	ka
AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b)	kr
AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b)	kr
AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b)	kr
AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b)	kr
AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b)	kr
AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b)	ka
AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b)	ka
AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b)	kr
AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b)	kr
AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b)	kr
AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b)	kr
AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b)	kr
AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b)	ka
AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b)	ka
AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b)	kr
AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b)	kr
AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b)	kr
AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b)	kr
AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b)	kr
AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b)	ka
AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b)	ka
AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b)	kr
AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b)	kr
AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b)	kr
AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b)	kr
AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b)	kr
AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b)	ka
AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b)	ka
AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b)	kr
AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b)	kr
AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b)	kr
AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b)	kr
AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b)	kr
AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b)	ka
AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b)	ka
AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b)	kr
AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b)	kr
AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b)	kr
AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b)	kr
AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b)	kr
AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b)	ka
AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b)	ka
AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b)	kr
AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b)	kr
AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b)	kr
AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b)	kr
AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b)	kr
AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b)	ka
AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b)	ka
AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b)	kr
AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b)	kr
AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b)	kr
AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b)	kr
AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b)	kr
AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b)	ka
AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b)	ka
AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b)	kr
AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b)	kr
AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b)	kr
AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b)	kr
AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b)	kr
AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b)	kr
AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b)	ka
AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b)	ka
AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b)	ka
AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b)	kr
AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b)	kr
AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b)	kr
AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b)	kr
AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b)	kr
AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b)	ka
AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b)	ka
AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b)	ka
AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b)	kr
AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b)	kr
AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b)	kr
AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b)	kr
AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b)	kr
AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b)	ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b)	ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b)	ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b)	kr
AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b)	kr
AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b)	kr
AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b)	kr
AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b)	kr
AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b)	ka
AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b)	ka
AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b)	ka
AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b)	kr
AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b)	kr
AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b)	kr
AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b)	kr
AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b)	kr
AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b)	ka
AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b)	ka
AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b)	ka
AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b)	kr
AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b)	kr
AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b)	kr
AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b)	kr
AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b)	kr
AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b)	ka
AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b)	ka
AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b)	ka
AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b)	kr
AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b)	kr
AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b)	kr
AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b)	kr
AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b)	kr
AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b)	ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b)	ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b)	ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b)	kr
AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b)	kr
AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b)	kr
AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b)	kr
AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b)	kr
AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b)	ka
AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b)	ka
AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b)	ka
AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b)	kr
AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b)	kr
AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b)	kr
AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b)	kr
AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b)	kr
AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b)	ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b)	ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b)	ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b)	kr
AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b)	kr
AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b)	kr
AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b)	kr
AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b)	kr
AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b)	ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b)	ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b)	ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b)	kr
AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b)	kr
AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b)	kr
AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b)	kr
AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b)	kr
AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b)	kr
AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b)	ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b)	ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b)	ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b)	ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b)	kr
AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b)	kr
AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b)	kr
AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b)	kr
AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b)	kr
AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b)	ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b)	ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b)	ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b)	ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b)	kr
AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b)	kr
AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b)	kr
AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b)	kr
AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b)	kr
AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b)	ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b)	ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b)	ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b)	ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b)	kr
AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b)	kr
AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b)	kr
AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b)	kr
AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b)	kr
AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b)	ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b)	ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b)	ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b)	ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b)	kr
AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b)	kr
AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b)	kr
AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b)	kr
AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b)	kr
AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b)	ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b)	ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b)	ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b)	ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b)	kr
AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b)	kr
AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b)	kr
AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b)	kr
AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b)	kr
AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b)	kr
AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b)	ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b)	ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b)	ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b)	ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b)	ka
AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b)	kr
AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b)	kr
AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b)	kr
AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b)	kr
AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b)	ka
AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b)	kr
AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b)	kr
AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b)	kr
AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b)	kr
AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b)	ka
AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b)	kr
AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b)	kr
AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b)	kr
AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b)	kr
AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b)	ka
AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b)	kr
AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b)	kr
AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b)	kr
AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b)	kr
AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b)	ka
AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b)->AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b)	kr
AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b)	kr
AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b)	kr
AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b)	kr
AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b)	ka
AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b)	ka
AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b)	ka
AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b)	kr
AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b)	kr
AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b)	kr
AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b)	ka
AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b)	ka
AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b)	kr
AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b)	kr
AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b)	kr
AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b)	ka
AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b)	ka
AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b)	kr
AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b)	kr
AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b)	kr
AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b)	ka
AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b)	ka
AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b)	kr
AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b)	kr
AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b)	kr
AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b)	ka
AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b)	ka
AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b)	kr
AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b)	kr
AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b)	kr
AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b)	ka
AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b)	ka
AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b)	kr
AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b)	kr
AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b)	kr
AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b)	ka
AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b)	ka
AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b)	kr
AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b)	kr
AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b)	kr
AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b)	ka
AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b)	ka
AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b)	kr
AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b)	kr
AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b)	kr
AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b)	ka
AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b)	ka
AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b)	kr
AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b)	kr
AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b)	kr
AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b)	ka
AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b)	ka
AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b)	kr
AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b)	kr
AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b)	kr
AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b)	ka
AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b)	ka
AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b)	ka
AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b)	kr
AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b)	kr
AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b)	ka
AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b)	ka
AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b)	ka
AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b)	kr
AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b)	kr
AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b)	ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b)	ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b)	ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b)	kr
AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b)	kr
AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b)	ka
AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b)	ka
AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b)	ka
AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b)	kr
AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b)	kr
AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b)	ka
AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b)	ka
AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b)	ka
AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b)	kr
AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b)	kr
AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b)	ka
AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b)	ka
AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b)	ka
AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b)	kr
AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b)	kr
AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b)	ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b)	ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b)	ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b)	kr
AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b)	kr
AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b)	ka
AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b)	ka
AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b)	ka
AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b)	kr
AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b)	kr
AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b)	ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b)	ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b)	ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b)	kr
AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b)	kr
AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b)	ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b)	ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b)	ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b)	kr
AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b)	kr
AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b)->AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b)	ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b)	ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b)	ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b)	ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b)	kr
AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b)	ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b)	ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b)	ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b)	ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b)	kr
AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b)	ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b)	ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b)	ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b)	ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b)	kr
AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b)	ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b)	ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b)	ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b)	ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b)	kr
AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b)	ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b)	ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b)	ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b)	ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b)	kr
AaP(H1~M,H2~M,H3~M,H4~M,H5~M,b)->AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b)	ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~M,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b)	ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b)	ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b)	ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b)	ka
AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b)	kr
AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b)	kr
AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b)	kr
AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b)	kr
AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b)->AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b)	kr


#Non random (influence of other histone)
#Inhibition
AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b)	kr_I
AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b)	kr_I
AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b)	kr_I
AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b)	kr_I
AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b)	kr_I
AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b)	kr_I
AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b)	kr_I
AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b)	kr_I
AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b)	kr_I
AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b)	kr_I
AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b)	kr_I
AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b)	kr_I
AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b)	kr_I
AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b)	kr_I
AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b)	kr_I
AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b)	kr_I
AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b)	kr_I
AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b)	kr_I
AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b)	kr_I
AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b)	kr_I
AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b)	kr_I
AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b)	kr_I
AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b)	kr_I
AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b)	kr_I
AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b)	kr_I
AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b)	kr_I
AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b)	kr_I
AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b)	kr_I
AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b)	kr_I
AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b)	kr_I
AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b)	kr_I
AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b)	kr_I
AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b)	kr_I
AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b)	kr_I
AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b)	kr_I
AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b)	kr_I
AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b)	kr_I
AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b)	kr_I
AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b)	kr_I
AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b)	kr_I
AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b)	kr_I
AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b)	kr_I
AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b)	kr_I
AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b)	kr_I
AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b)	kr_I
AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b)	kr_I
AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b)	kr_I
AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b)	kr_I
AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b)	kr_I
AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b)	kr_I
AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b)	kr_I
AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b)	kr_I
AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b)	kr_I
AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b)	kr_I
AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b)	kr_I
AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b)	kr_I
AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b)	kr_I
AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b)	kr_I
AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b)	kr_I
AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b)	kr_I
AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b)	kr_I
AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b)	kr_I
AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b)	kr_I
AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b)	kr_I
AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b)	kr_I
AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b)	kr_I
AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b)	kr_I
AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b)	kr_I
AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b)	kr_I
AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b)	kr_I
AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b)	kr_I
AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b)	kr_I
AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b)	kr_I
AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b)	kr_I
AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b)	kr_I
AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b)	kr_I
AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b)	kr_I
AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b)	kr_I
AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b)	kr_I
AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b)	kr_I
AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b)	kr_I
AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b)	kr_I
AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b)	kr_I
AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b)	kr_I
AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b)	kr_I
AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b)	kr_I
AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b)	kr_I
AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b)	kr_I
AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b)	kr_I
AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b)	kr_I
AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b)	kr_I
AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b)	kr_I
AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b)	kr_I
AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b)	kr_I
AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b)	kr_I
AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b)	kr_I
AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b)	kr_I
AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b)	kr_I
AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b)	kr_I
AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b)	kr_I
AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b)	kr_I
AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b)	kr_I
AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b)	kr_I
AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b)	kr_I
AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b)	kr_I
AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b)	kr_I
AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b)	kr_I
AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b)	kr_I
AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b)	kr_I
AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b)	kr_I
AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b)	kr_I
AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b)	kr_I
AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b)	kr_I
AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b)	kr_I
AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b)	kr_I
AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b)	kr_I
AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b)	kr_I
AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b)	kr_I
AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b)	kr_I
AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b)	kr_I
AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b)	kr_I
AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b)	kr_I
AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b)	kr_I
AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b)	kr_I
AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b)	kr_I
AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b)	kr_I
AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b)	kr_I
AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b)	kr_I
AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b)	kr_I
AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b)	kr_I
AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b)	kr_I
AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b)	kr_I
AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b)	kr_I
AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b)	kr_I
AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b)	kr_I
AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b)	kr_I
AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b)	kr_I
AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b)	kr_I
AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b)	kr_I
AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b)	kr_I
AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b)	kr_I
AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b)	kr_I
AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b)	kr_I
AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b)	kr_I
AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b)	kr_I
AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b)	kr_I
AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b)	kr_I
AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b)	kr_I
AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b)	kr_I
AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b)	kr_I
AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b)	kr_I
AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b)	kr_I
AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b)	kr_I
AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b)	kr_I
AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b)	kr_I
AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b)	kr_I
AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b)	kr_I
AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b)	kr_I
AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b)	kr_I
AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b)	kr_I
AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b)	kr_I
AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b)	kr_I
AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b)	kr_I
AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b)	kr_I
AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b)	kr_I
AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b)	kr_I
AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b)	kr_I
AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b)	kr_I
AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b)	kr_I
AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b)	kr_I
AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b)	kr_I
AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b)	kr_I
AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b)	kr_I
AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b)	kr_I
AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b)	kr_I
AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b)	kr_I
AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b)	kr_I
AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b)	kr_I
AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b)	kr_I
AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b)	kr_I
AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b)	kr_I
AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b)	kr_I
AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b)	kr_I
AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b)	kr_I
AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b)	kr_I
AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b)	kr_I
AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b)	kr_I
AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b)	kr_I
AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b)	kr_I
AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b)	kr_I
AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b)	kr_I
AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b)	kr_I
AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b)	kr_I
AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b)	kr_I
AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b)	kr_I
AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b)	kr_I
AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b)	kr_I
AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b)	kr_I
AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b)	kr_I
AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b)	kr_I
AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b)	kr_I
AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b)	kr_I
AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b)	kr_I
AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b)	kr_I
AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b)	kr_I
AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b)	kr_I
AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b)	kr_I
AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b)	kr_I
AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b)	kr_I
AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b)	kr_I
AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b)	kr_I
AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b)	kr_I
AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b)	kr_I
AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b)	kr_I
AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b)	kr_I
AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b)	kr_I
AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b)	kr_I
AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b)	kr_I
AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b)	kr_I
AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b)	kr_I
AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b)	kr_I
AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b)	kr_I
AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b)	kr_I
AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b)->AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b)	kr_I
AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b)	kr_I
AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b)	kr_I
AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b)->AaP(H1~M,H2~M,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b)->AaP(H1~M,H2~M,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b)->AaP(H1~M,H2~M,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b)	kr_I
AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b)	kr_I
AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b)	kr_I
AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b)	kr_I
AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b)	kr_I
AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b)	kr_I
AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b)	kr_I
AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b)	kr_I
AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b)	kr_I
AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b)	kr_I
AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b)	kr_I
AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b)->AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b)	kr_I
AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b)	kr_I
AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b)	kr_I
AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b)	kr_I
AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b)	kr_I
AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b)	kr_I
AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b)	kr_I
AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b)	kr_I
AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b)	kr_I
AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b)	kr_I
AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b)	kr_I
AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b)	kr_I
AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b)	kr_I
AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b)	kr_I
AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b)	kr_I
AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b)	kr_I
AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b)	kr_I
AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b)	kr_I
AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b)	kr_I
AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b)	kr_I
AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b)	kr_I
AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b)	kr_I
AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b)	kr_I
AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b)	kr_I
AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b)	kr_I
AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b)	kr_I
AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b)	kr_I
AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b)	kr_I
AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b)	kr_I
AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b)	kr_I
AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b)	kr_I
AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b)	kr_I
AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b)	kr_I
AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b)	kr_I
AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b)	kr_I

#Activation
AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b)	ka_I
AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b)	ka_I
AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b)	ka_I
AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b)	ka_I
AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b)	ka_I
AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b)	ka_I
AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b)	ka_I
AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b)	ka_I
AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b)	ka_I
AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b)	ka_I
AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b)	ka_I
AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b)	ka_I
AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b)	ka_I
AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b)	ka_I
AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b)	ka_I
AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b)	ka_I
AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b)	ka_I
AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b)	ka_I
AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b)	ka_I
AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b)	ka_I
AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b)	ka_I
AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b)	ka_I
AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b)	ka_I
AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b)	ka_I
AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b)	ka_I
AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b)	ka_I
AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b)	ka_I
AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b)	ka_I
AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b)	ka_I
AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b)	ka_I
AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b)	ka_I
AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b)	ka_I
AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b)	ka_I
AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b)	ka_I
AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b)	ka_I
AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b)	ka_I
AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b)	ka_I
AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b)	ka_I
AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b)	ka_I
AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b)	ka_I
AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b)	ka_I
AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b)	ka_I
AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b)	ka_I
AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b)	ka_I
AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b)	ka_I
AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b)	ka_I
AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b)	ka_I
AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b)	ka_I
AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b)	ka_I
AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b)	ka_I
AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b)	ka_I
AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b)	ka_I
AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b)	ka_I
AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b)	ka_I
AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b)	ka_I
AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b)	ka_I
AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b)	ka_I
AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b)	ka_I
AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b)	ka_I
AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b)	ka_I
AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b)	ka_I
AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b)	ka_I
AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b)	ka_I
AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b)	ka_I
AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b)	ka_I
AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b)	ka_I
AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b)->AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b)	ka_I
AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b)	ka_I
AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b)	ka_I
AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b)	ka_I
AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b)	ka_I
AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b)->AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b)->AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b)	ka_I
AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b)	ka_I
AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b)	ka_I
AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b)	ka_I
AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b)	ka_I
AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b)	ka_I
AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b)	ka_I
AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b)	ka_I
AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b)	ka_I
AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b)	ka_I
AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b)	ka_I
AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b)	ka_I
AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b)	ka_I
AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b)	ka_I
AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b)	ka_I
AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b)	ka_I
AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b)	ka_I
AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b)	ka_I
AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b)	ka_I
AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b)	ka_I
AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b)	ka_I
AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b)	ka_I
AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b)	ka_I
AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b)	ka_I
AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b)	ka_I
AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b)	ka_I
AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b)	ka_I
AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b)	ka_I
AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b)	ka_I
AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b)	ka_I
AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b)	ka_I
AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b)	ka_I
AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b)	ka_I
AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b)	ka_I
AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b)	ka_I
AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b)	ka_I
AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b)	ka_I
AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b)	ka_I
AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b)	ka_I
AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b)	ka_I
AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b)	ka_I
AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b)	ka_I
AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b)	ka_I
AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b)	ka_I
AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b)	ka_I
AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b)	ka_I
AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b)	ka_I
AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b)	ka_I
AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b)	ka_I
AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b)	ka_I
AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b)	ka_I
AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b)	ka_I
AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b)	ka_I
AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b)	ka_I
AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b)	ka_I
AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b)	ka_I
AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b)	ka_I
AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b)	ka_I
AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b)	ka_I
AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b)	ka_I
AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b)	ka_I
AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b)	ka_I
AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b)	ka_I
AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b)	ka_I
AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b)	ka_I
AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b)	ka_I
AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b)	ka_I
AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b)	ka_I
AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b)	ka_I
AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b)	ka_I
AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b)	ka_I
AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b)	ka_I
AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b)	ka_I
AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b)	ka_I
AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b)	ka_I
AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b)	ka_I
AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b)	ka_I
AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b)	ka_I
AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b)	ka_I
AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b)	ka_I
AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b)	ka_I
AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b)	ka_I
AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b)	ka_I
AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b)	ka_I
AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b)	ka_I
AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b)	ka_I
AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b)	ka_I
AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b)	ka_I
AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b)	ka_I
AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b)	ka_I
AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b)	ka_I
AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b)	ka_I
AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b)	ka_I
AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b)	ka_I
AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b)	ka_I
AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b)	ka_I
AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b)	ka_I
AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b)	ka_I
AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b)	ka_I
AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b)	ka_I
AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b)	ka_I
AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b)	ka_I
AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b)	ka_I
AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b)	ka_I
AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b)	ka_I
AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b)	ka_I
AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b)->AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b)	ka_I
AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b)	ka_I
AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b)	ka_I
AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b)->AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b)	ka_I
AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b)	ka_I
AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b)	ka_I
AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b)	ka_I
AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b)	ka_I
AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b)	ka_I
AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b)	ka_I
AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b)->AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b)	ka_I
AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b)	ka_I
AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b)	ka_I
AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b)	ka_I
AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b)	ka_I
AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b)	ka_I
AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b)	ka_I
AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b)	ka_I
AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b)	ka_I
AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b)	ka_I
AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b)	ka_I
AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b)	ka_I
AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b)	ka_I
AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b)	ka_I
AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b)	ka_I
AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b)	ka_I
AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b)	ka_I
AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b)	ka_I
AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b)	ka_I
AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b)	ka_I
AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b)->AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b)	ka_I
AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b)	ka_I
AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b)	ka_I
AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b)	ka_I
AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b)	ka_I
AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b)	ka_I
AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b)	ka_I
AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b)	ka_I
AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b)	ka_I
AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b)	ka_I
AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b)	ka_I
AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b)	ka_I
AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b)	ka_I
AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b)	ka_I
AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b)	ka_I
AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b)	ka_I
AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b)	ka_I
AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b)	ka_I
AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b)	ka_I
AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b)	ka_I
AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b)	ka_I
AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b)	ka_I
AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b)	ka_I
AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b)->AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b)->AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b)->AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b)->AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b)->AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b)	ka_I
AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b)->AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b)	ka_I
AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b)	ka_I
AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b)	ka_I
AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b)->AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b)	ka_I
AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b)	ka_I
AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b)	ka_I
AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b)	ka_I
AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b)	ka_I
AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b)	ka_I
AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b)	ka_I
AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b)	ka_I
AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b)	ka_I
AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b)	ka_I
AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b)	ka_I
AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b)	ka_I
AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b)	ka_I
AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b)	ka_I
AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b)	ka_I
AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b)	ka_I
AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b)	ka_I
AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b)	ka_I
AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b)	ka_I
AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b)	ka_I
AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b)	ka_I
AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b)	ka_I
AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b)	ka_I
AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b)	ka_I
AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b)	ka_I
AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b)	ka_I
AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b)	ka_I
AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b)	ka_I
AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b)	ka_I
AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b)	ka_I
AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b)	ka_I
AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b)->AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b)	ka_I
AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b)->AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b)	ka_I
AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b)->AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b)->AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b)->AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b)	ka_I
AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b)->AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b)	ka_I
AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b)->AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b)	ka_I
AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b)->AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b)	ka_I
AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b)->AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b)	ka_I
AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b)	ka_I
AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b)	ka_I
AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b)	ka_I
AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b)->AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b)	ka_I
AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b)	ka_I
AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b)	ka_I
AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b)	ka_I
AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b)->AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b)	ka_I
AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b)	ka_I
AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b)	ka_I
AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b)	ka_I
AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b)->AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b)	ka_I
AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b)	ka_I
AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b)->AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b)	ka_I




#TF binding
AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b) + Aa(b,u~a)<->AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b) + As(b,u~a)<->AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b) + Aa(b,u~a)<->AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b) + As(b,u~a)<->AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b) + Aa(b,u~a)<->AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b) + As(b,u~a)<->AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b) + Aa(b,u~a)<->AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b) + As(b,u~a)<->AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b) + Aa(b,u~a)<->AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b) + As(b,u~a)<->AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b) + Aa(b,u~a)<->AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b) + As(b,u~a)<->AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b) + Aa(b,u~a)<->AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b) + As(b,u~a)<->AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b) + Aa(b,u~a)<->AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b) + As(b,u~a)<->AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b) + Aa(b,u~a)<->AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b) + As(b,u~a)<->AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b) + Aa(b,u~a)<->AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b) + As(b,u~a)<->AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b) + Aa(b,u~a)<->AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b) + As(b,u~a)<->AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b) + Aa(b,u~a)<->AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b) + As(b,u~a)<->AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b) + Aa(b,u~a)<->AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b) + As(b,u~a)<->AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b) + Aa(b,u~a)<->AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b) + As(b,u~a)<->AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b) + Aa(b,u~a)<->AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b) + As(b,u~a)<->AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b) + Aa(b,u~a)<->AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b) + As(b,u~a)<->AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b) + Aa(b,u~a)<->AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b) + As(b,u~a)<->AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b) + Aa(b,u~a)<->AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b) + As(b,u~a)<->AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b) + Aa(b,u~a)<->AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b) + As(b,u~a)<->AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b) + Aa(b,u~a)<->AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b) + As(b,u~a)<->AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b) + Aa(b,u~a)<->AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b) + As(b,u~a)<->AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b) + Aa(b,u~a)<->AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b) + As(b,u~a)<->AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b) + Aa(b,u~a)<->AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b) + As(b,u~a)<->AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b) + Aa(b,u~a)<->AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b) + As(b,u~a)<->AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b) + Aa(b,u~a)<->AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b) + As(b,u~a)<->AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b) + Aa(b,u~a)<->AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b) + As(b,u~a)<->AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b) + Aa(b,u~a)<->AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b) + As(b,u~a)<->AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b) + Aa(b,u~a)<->AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b) + As(b,u~a)<->AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b) + Aa(b,u~a)<->AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b) + As(b,u~a)<->AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b) + Aa(b,u~a)<->AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b) + As(b,u~a)<->AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b) + Aa(b,u~a)<->AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b) + As(b,u~a)<->AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b) + Aa(b,u~a)<->AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b) + As(b,u~a)<->AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b) + Aa(b,u~a)<->AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b) + As(b,u~a)<->AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b) + Aa(b,u~a)<->AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b) + As(b,u~a)<->AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b) + Aa(b,u~a)<->AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b) + As(b,u~a)<->AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b) + Aa(b,u~a)<->AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b) + As(b,u~a)<->AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b) + Aa(b,u~a)<->AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b) + As(b,u~a)<->AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b) + Aa(b,u~a)<->AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b) + As(b,u~a)<->AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b) + Aa(b,u~a)<->AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b) + As(b,u~a)<->AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b) + Aa(b,u~a)<->AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b) + As(b,u~a)<->AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b) + Aa(b,u~a)<->AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b) + As(b,u~a)<->AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b) + Aa(b,u~a)<->AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b) + As(b,u~a)<->AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b) + Aa(b,u~a)<->AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b) + As(b,u~a)<->AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b) + Aa(b,u~a)<->AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b) + As(b,u~a)<->AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b) + Aa(b,u~a)<->AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b) + As(b,u~a)<->AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b) + Aa(b,u~a)<->AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b) + As(b,u~a)<->AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b) + Aa(b,u~a)<->AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b) + As(b,u~a)<->AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b) + Aa(b,u~a)<->AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b) + As(b,u~a)<->AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b) + Aa(b,u~a)<->AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b) + As(b,u~a)<->AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b) + Aa(b,u~a)<->AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b) + As(b,u~a)<->AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b) + Aa(b,u~a)<->AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b) + As(b,u~a)<->AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b) + Aa(b,u~a)<->AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b) + As(b,u~a)<->AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b) + Aa(b,u~a)<->AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b) + As(b,u~a)<->AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b) + Aa(b,u~a)<->AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b) + As(b,u~a)<->AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b) + Aa(b,u~a)<->AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b) + As(b,u~a)<->AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b) + Aa(b,u~a)<->AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b) + As(b,u~a)<->AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b) + Aa(b,u~a)<->AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b) + As(b,u~a)<->AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b) + Aa(b,u~a)<->AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b) + As(b,u~a)<->AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b) + Aa(b,u~a)<->AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b) + As(b,u~a)<->AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b) + Aa(b,u~a)<->AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b) + As(b,u~a)<->AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b) + Aa(b,u~a)<->AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b) + As(b,u~a)<->AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b) + Aa(b,u~a)<->AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b) + As(b,u~a)<->AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b) + Aa(b,u~a)<->AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b) + As(b,u~a)<->AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b) + Aa(b,u~a)<->AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b) + As(b,u~a)<->AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b) + Aa(b,u~a)<->AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b) + As(b,u~a)<->AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b) + Aa(b,u~a)<->AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b) + As(b,u~a)<->AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b) + Aa(b,u~a)<->AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b) + As(b,u~a)<->AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b) + Aa(b,u~a)<->AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b) + As(b,u~a)<->AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b) + Aa(b,u~a)<->AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b) + As(b,u~a)<->AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b) + Aa(b,u~a)<->AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b) + As(b,u~a)<->AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b) + Aa(b,u~a)<->AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b) + As(b,u~a)<->AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b) + Aa(b,u~a)<->AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b) + As(b,u~a)<->AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b) + Aa(b,u~a)<->AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b) + As(b,u~a)<->AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b) + Aa(b,u~a)<->AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b) + As(b,u~a)<->AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b) + Aa(b,u~a)<->AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b) + As(b,u~a)<->AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b) + Aa(b,u~a)<->AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b) + As(b,u~a)<->AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b) + Aa(b,u~a)<->AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b) + As(b,u~a)<->AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b) + Aa(b,u~a)<->AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b) + As(b,u~a)<->AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b) + Aa(b,u~a)<->AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b) + As(b,u~a)<->AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b) + Aa(b,u~a)<->AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b) + As(b,u~a)<->AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b) + Aa(b,u~a)<->AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b) + As(b,u~a)<->AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b) + Aa(b,u~a)<->AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b) + As(b,u~a)<->AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b) + Aa(b,u~a)<->AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b) + As(b,u~a)<->AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b) + Aa(b,u~a)<->AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b) + As(b,u~a)<->AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b) + Aa(b,u~a)<->AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b) + As(b,u~a)<->AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b) + Aa(b,u~a)<->AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b) + As(b,u~a)<->AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b) + Aa(b,u~a)<->AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b) + As(b,u~a)<->AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b) + Aa(b,u~a)<->AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b) + As(b,u~a)<->AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b) + Aa(b,u~a)<->AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b) + As(b,u~a)<->AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b) + Aa(b,u~a)<->AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b) + As(b,u~a)<->AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b) + Aa(b,u~a)<->AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b) + As(b,u~a)<->AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b) + Aa(b,u~a)<->AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b) + As(b,u~a)<->AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b) + Aa(b,u~a)<->AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b) + As(b,u~a)<->AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b) + Aa(b,u~a)<->AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b) + As(b,u~a)<->AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b) + Aa(b,u~a)<->AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b) + As(b,u~a)<->AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b) + Aa(b,u~a)<->AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b) + As(b,u~a)<->AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b) + Aa(b,u~a)<->AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b) + As(b,u~a)<->AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b) + Aa(b,u~a)<->AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b) + As(b,u~a)<->AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b) + Aa(b,u~a)<->AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b) + As(b,u~a)<->AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b) + Aa(b,u~a)<->AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b) + As(b,u~a)<->AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b) + Aa(b,u~a)<->AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b) + As(b,u~a)<->AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b) + Aa(b,u~a)<->AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b) + As(b,u~a)<->AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b) + Aa(b,u~a)<->AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b) + As(b,u~a)<->AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b) + Aa(b,u~a)<->AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b) + As(b,u~a)<->AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b) + Aa(b,u~a)<->AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b) + As(b,u~a)<->AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b) + Aa(b,u~a)<->AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b) + As(b,u~a)<->AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b) + Aa(b,u~a)<->AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b) + As(b,u~a)<->AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b) + Aa(b,u~a)<->AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b) + As(b,u~a)<->AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b) + Aa(b,u~a)<->AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b) + As(b,u~a)<->AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b) + Aa(b,u~a)<->AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b) + As(b,u~a)<->AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b) + Aa(b,u~a)<->AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b) + As(b,u~a)<->AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b) + Aa(b,u~a)<->AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b) + As(b,u~a)<->AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b) + Aa(b,u~a)<->AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b) + As(b,u~a)<->AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b) + Aa(b,u~a)<->AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b) + As(b,u~a)<->AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b) + Aa(b,u~a)<->AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b) + As(b,u~a)<->AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b) + Aa(b,u~a)<->AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b) + As(b,u~a)<->AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b) + Aa(b,u~a)<->AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b) + As(b,u~a)<->AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b) + Aa(b,u~a)<->AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b) + As(b,u~a)<->AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b) + Aa(b,u~a)<->AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b) + As(b,u~a)<->AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b) + Aa(b,u~a)<->AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b) + As(b,u~a)<->AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b) + Aa(b,u~a)<->AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b) + As(b,u~a)<->AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b) + Aa(b,u~a)<->AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b) + As(b,u~a)<->AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b) + Aa(b,u~a)<->AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b) + As(b,u~a)<->AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b) + Aa(b,u~a)<->AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b) + As(b,u~a)<->AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b) + Aa(b,u~a)<->AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b) + As(b,u~a)<->AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b) + Aa(b,u~a)<->AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b) + As(b,u~a)<->AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b) + Aa(b,u~a)<->AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b) + As(b,u~a)<->AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b) + Aa(b,u~a)<->AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b) + As(b,u~a)<->AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b) + Aa(b,u~a)<->AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b) + As(b,u~a)<->AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b) + Aa(b,u~a)<->AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b) + As(b,u~a)<->AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b) + Aa(b,u~a)<->AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b) + As(b,u~a)<->AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b) + Aa(b,u~a)<->AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b) + As(b,u~a)<->AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b) + Aa(b,u~a)<->AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b) + As(b,u~a)<->AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b) + Aa(b,u~a)<->AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b) + As(b,u~a)<->AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b) + Aa(b,u~a)<->AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b) + As(b,u~a)<->AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b) + Aa(b,u~a)<->AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b) + As(b,u~a)<->AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b) + Aa(b,u~a)<->AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b) + As(b,u~a)<->AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b) + Aa(b,u~a)<->AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b) + As(b,u~a)<->AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b) + Aa(b,u~a)<->AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b) + As(b,u~a)<->AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b) + Aa(b,u~a)<->AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b) + As(b,u~a)<->AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b) + Aa(b,u~a)<->AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b) + As(b,u~a)<->AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b) + Aa(b,u~a)<->AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b) + As(b,u~a)<->AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b) + Aa(b,u~a)<->AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b) + As(b,u~a)<->AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b) + Aa(b,u~a)<->AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b) + As(b,u~a)<->AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b) + Aa(b,u~a)<->AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b) + As(b,u~a)<->AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b) + Aa(b,u~a)<->AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b) + As(b,u~a)<->AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b) + Aa(b,u~a)<->AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b) + As(b,u~a)<->AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b) + Aa(b,u~a)<->AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b) + As(b,u~a)<->AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b) + Aa(b,u~a)<->AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b) + As(b,u~a)<->AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b) + Aa(b,u~a)<->AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b) + As(b,u~a)<->AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b) + Aa(b,u~a)<->AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b) + As(b,u~a)<->AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b) + Aa(b,u~a)<->AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b) + As(b,u~a)<->AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b) + Aa(b,u~a)<->AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b) + As(b,u~a)<->AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b) + Aa(b,u~a)<->AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b) + As(b,u~a)<->AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b) + Aa(b,u~a)<->AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b) + As(b,u~a)<->AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b) + Aa(b,u~a)<->AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b) + As(b,u~a)<->AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b) + Aa(b,u~a)<->AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b) + As(b,u~a)<->AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b) + Aa(b,u~a)<->AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b) + As(b,u~a)<->AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b) + Aa(b,u~a)<->AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b) + As(b,u~a)<->AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b) + Aa(b,u~a)<->AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b) + As(b,u~a)<->AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b) + Aa(b,u~a)<->AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b) + As(b,u~a)<->AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b) + Aa(b,u~a)<->AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b) + As(b,u~a)<->AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b) + Aa(b,u~a)<->AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b) + As(b,u~a)<->AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b) + Aa(b,u~a)<->AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b) + As(b,u~a)<->AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b) + Aa(b,u~a)<->AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b) + As(b,u~a)<->AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b) + Aa(b,u~a)<->AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b) + As(b,u~a)<->AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b) + Aa(b,u~a)<->AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b) + As(b,u~a)<->AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b) + Aa(b,u~a)<->AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b) + As(b,u~a)<->AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b) + Aa(b,u~a)<->AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b) + As(b,u~a)<->AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b) + Aa(b,u~a)<->AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b) + As(b,u~a)<->AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b) + Aa(b,u~a)<->AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b) + As(b,u~a)<->AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b) + Aa(b,u~a)<->AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b) + As(b,u~a)<->AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b) + Aa(b,u~a)<->AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b) + As(b,u~a)<->AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b) + Aa(b,u~a)<->AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b) + As(b,u~a)<->AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b) + Aa(b,u~a)<->AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b) + As(b,u~a)<->AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b) + Aa(b,u~a)<->AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b) + As(b,u~a)<->AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b) + Aa(b,u~a)<->AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b) + As(b,u~a)<->AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b) + Aa(b,u~a)<->AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b) + As(b,u~a)<->AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b) + Aa(b,u~a)<->AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b) + As(b,u~a)<->AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b) + Aa(b,u~a)<->AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b) + As(b,u~a)<->AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b) + Aa(b,u~a)<->AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b) + As(b,u~a)<->AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b) + Aa(b,u~a)<->AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b) + As(b,u~a)<->AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b) + Aa(b,u~a)<->AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b) + As(b,u~a)<->AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b) + Aa(b,u~a)<->AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b) + As(b,u~a)<->AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b) + Aa(b,u~a)<->AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b) + As(b,u~a)<->AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b) + Aa(b,u~a)<->AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b) + As(b,u~a)<->AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b) + Aa(b,u~a)<->AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b) + As(b,u~a)<->AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b) + Aa(b,u~a)<->AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b) + As(b,u~a)<->AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b) + Aa(b,u~a)<->AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b) + As(b,u~a)<->AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b) + Aa(b,u~a)<->AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b) + As(b,u~a)<->AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b) + Aa(b,u~a)<->AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b) + As(b,u~a)<->AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b) + Aa(b,u~a)<->AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b) + As(b,u~a)<->AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b) + Aa(b,u~a)<->AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b) + As(b,u~a)<->AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b) + Aa(b,u~a)<->AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b) + As(b,u~a)<->AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b) + Aa(b,u~a)<->AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b) + As(b,u~a)<->AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b) + Aa(b,u~a)<->AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b) + As(b,u~a)<->AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b) + Aa(b,u~a)<->AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b) + As(b,u~a)<->AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b) + Aa(b,u~a)<->AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b) + As(b,u~a)<->AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b) + Aa(b,u~a)<->AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b) + As(b,u~a)<->AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b) + Aa(b,u~a)<->AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b) + As(b,u~a)<->AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b) + Aa(b,u~a)<->AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b) + As(b,u~a)<->AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b) + Aa(b,u~a)<->AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b) + As(b,u~a)<->AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b) + Aa(b,u~a)<->AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b) + As(b,u~a)<->AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b) + Aa(b,u~a)<->AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b) + As(b,u~a)<->AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b) + Aa(b,u~a)<->AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b) + As(b,u~a)<->AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b) + Aa(b,u~a)<->AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b) + As(b,u~a)<->AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b) + Aa(b,u~a)<->AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b) + As(b,u~a)<->AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b) + Aa(b,u~a)<->AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b) + As(b,u~a)<->AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b) + Aa(b,u~a)<->AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b) + As(b,u~a)<->AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b) + Aa(b,u~a)<->AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b) + As(b,u~a)<->AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b) + Aa(b,u~a)<->AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b) + As(b,u~a)<->AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b) + Aa(b,u~a)<->AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b) + As(b,u~a)<->AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b) + Aa(b,u~a)<->AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b) + As(b,u~a)<->AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b) + Aa(b,u~a)<->AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b) + As(b,u~a)<->AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b) + Aa(b,u~a)<->AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b) + As(b,u~a)<->AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b) + Aa(b,u~a)<->AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b) + As(b,u~a)<->AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b) + Aa(b,u~a)<->AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b) + As(b,u~a)<->AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b) + Aa(b,u~a)<->AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b) + As(b,u~a)<->AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b) + Aa(b,u~a)<->AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b) + As(b,u~a)<->AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b) + Aa(b,u~a)<->AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b) + As(b,u~a)<->AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b) + Aa(b,u~a)<->AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b) + As(b,u~a)<->AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b) + Aa(b,u~a)<->AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b) + As(b,u~a)<->AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b) + Aa(b,u~a)<->AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b) + As(b,u~a)<->AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b) + Aa(b,u~a)<->AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b) + As(b,u~a)<->AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b) + Aa(b,u~a)<->AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b) + As(b,u~a)<->AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b) + Aa(b,u~a)<->AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b) + As(b,u~a)<->AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b) + Aa(b,u~a)<->AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b) + As(b,u~a)<->AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b) + Aa(b,u~a)<->AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b) + As(b,u~a)<->AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b) + Aa(b,u~a)<->AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b) + As(b,u~a)<->AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b) + Aa(b,u~a)<->AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b) + As(b,u~a)<->AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b) + Aa(b,u~a)<->AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b) + As(b,u~a)<->AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b) + Aa(b,u~a)<->AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b) + As(b,u~a)<->AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b) + Aa(b,u~a)<->AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b) + As(b,u~a)<->AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b) + Aa(b,u~a)<->AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b) + As(b,u~a)<->AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b) + Aa(b,u~a)<->AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b) + As(b,u~a)<->AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b) + Aa(b,u~a)<->AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b) + As(b,u~a)<->AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b) + Aa(b,u~a)<->AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b) + As(b,u~a)<->AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b) + Aa(b,u~a)<->AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b) + As(b,u~a)<->AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b) + Aa(b,u~a)<->AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b) + As(b,u~a)<->AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b) + Aa(b,u~a)<->AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b) + As(b,u~a)<->AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b) + Aa(b,u~a)<->AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b) + As(b,u~a)<->AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~M,H4~M,H5~M,b) + Aa(b,u~a)<->AaP(H1~M,H2~M,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~M,H2~M,H3~M,H4~M,H5~M,b) + As(b,u~a)<->AaP(H1~M,H2~M,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b) + Aa(b,u~a)<->AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	kon,koff 
AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b) + As(b,u~a)<->AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	kon,koff 


	
#TF
AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~M,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~A,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~A,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~A,H3~M,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~M,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~A,H2~M,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~A,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~A,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~A,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~A,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~M,H4~A,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~A,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~M,H4~U,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~M,H5~A,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~M,H4~U,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~M,H4~M,H5~U,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~M,H3~U,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~M,H2~U,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b!0).Aa(b!0,u~a)	tf_ka
AaP(H1~M,H2~M,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)->AaP(H1~U,H2~M,H3~M,H4~M,H5~M,b!0).As(b!0,u~a)	tf_ka





#Transcription
AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~A,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~U,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~A,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~A,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~A,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~U,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~A,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~A,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~U,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~U,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~U,H5~U,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~A,H5~U,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~A,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~A,H5~U,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~A,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~A,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~U,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~U,H5~A,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~U,H4~A,H5~A,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~A,H4~A,H5~A,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~A,H4~A,H5~A,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~A,H3~U,H4~U,H5~U,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~A,H4~U,H5~U,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~A,H5~U,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~A,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~A,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a)->AaP(H1~U,H2~U,H3~U,H4~U,H5~U,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b!0).Aa(b!0,u~a) +  RNA_Aa() TR_Aa
AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b!0).As(b!0,u~a)->AaP(H1~A,H2~A,H3~A,H4~A,H5~A,b!0).As(b!0,u~a) +  RNA_Aa() TR_Aa


##################################RETRO##################################

#########################################################################

#############################################################################################
RetP(H1~M,H2~A,H3~U,b)->RetP(H1~M,H2~U,H3~U,b)	kr_Ret
RetP(H1~M,H2~A,H3~U,b)->RetP(H1~U,H2~A,H3~U,b)	ka_Ret
RetP(H1~M,H2~A,H3~U,b)->RetP(H1~M,H2~A,H3~A,b)	ka_Ret
RetP(H1~M,H2~A,H3~U,b)->RetP(H1~M,H2~A,H3~M,b)	kr_Ret
RetP(H1~M,H2~U,H3~A,b)->RetP(H1~M,H2~U,H3~U,b)	kr_Ret
RetP(H1~M,H2~U,H3~A,b)->RetP(H1~U,H2~U,H3~A,b)	ka_Ret
RetP(H1~M,H2~U,H3~A,b)->RetP(H1~M,H2~A,H3~A,b)	ka_Ret
RetP(H1~M,H2~U,H3~A,b)->RetP(H1~M,H2~M,H3~A,b)	kr_Ret
RetP(H1~A,H2~M,H3~U,b)->RetP(H1~U,H2~M,H3~U,b)	kr_Ret
RetP(H1~A,H2~M,H3~U,b)->RetP(H1~A,H2~U,H3~U,b)	ka_Ret
RetP(H1~A,H2~M,H3~U,b)->RetP(H1~A,H2~M,H3~A,b)	ka_Ret
RetP(H1~A,H2~M,H3~U,b)->RetP(H1~A,H2~M,H3~M,b)	kr_Ret
RetP(H1~A,H2~U,H3~M,b)->RetP(H1~U,H2~U,H3~M,b)	kr_Ret
RetP(H1~A,H2~U,H3~M,b)->RetP(H1~A,H2~U,H3~U,b)	ka_Ret
RetP(H1~A,H2~U,H3~M,b)->RetP(H1~A,H2~A,H3~M,b)	ka_Ret
RetP(H1~A,H2~U,H3~M,b)->RetP(H1~A,H2~M,H3~M,b)	kr_Ret
RetP(H1~U,H2~M,H3~A,b)->RetP(H1~U,H2~M,H3~U,b)	kr_Ret
RetP(H1~U,H2~M,H3~A,b)->RetP(H1~U,H2~U,H3~A,b)	ka_Ret
RetP(H1~U,H2~M,H3~A,b)->RetP(H1~A,H2~M,H3~A,b)	ka_Ret
RetP(H1~U,H2~M,H3~A,b)->RetP(H1~M,H2~M,H3~A,b)	kr_Ret
RetP(H1~U,H2~A,H3~M,b)->RetP(H1~U,H2~U,H3~M,b)	kr_Ret
RetP(H1~U,H2~A,H3~M,b)->RetP(H1~U,H2~A,H3~U,b)	ka_Ret
RetP(H1~U,H2~A,H3~M,b)->RetP(H1~A,H2~A,H3~M,b)	ka_Ret
RetP(H1~U,H2~A,H3~M,b)->RetP(H1~M,H2~A,H3~M,b)	kr_Ret
RetP(H1~U,H2~U,H3~M,b)->RetP(H1~A,H2~U,H3~M,b)	ka_Ret
RetP(H1~U,H2~U,H3~M,b)->RetP(H1~U,H2~A,H3~M,b)	ka_Ret
RetP(H1~U,H2~U,H3~M,b)->RetP(H1~M,H2~U,H3~M,b)	kr_Ret
RetP(H1~U,H2~U,H3~M,b)->RetP(H1~U,H2~M,H3~M,b)	kr_Ret
RetP(H1~U,H2~U,H3~M,b)->RetP(H1~U,H2~U,H3~U,b)	ka_Ret
RetP(H1~U,H2~M,H3~U,b)->RetP(H1~A,H2~M,H3~U,b)	ka_Ret
RetP(H1~U,H2~M,H3~U,b)->RetP(H1~U,H2~M,H3~A,b)	ka_Ret
RetP(H1~U,H2~M,H3~U,b)->RetP(H1~M,H2~M,H3~U,b)	kr_Ret
RetP(H1~U,H2~M,H3~U,b)->RetP(H1~U,H2~M,H3~M,b)	kr_Ret
RetP(H1~U,H2~M,H3~U,b)->RetP(H1~U,H2~U,H3~U,b)	ka_Ret
RetP(H1~M,H2~U,H3~U,b)->RetP(H1~M,H2~A,H3~U,b)	ka_Ret
RetP(H1~M,H2~U,H3~U,b)->RetP(H1~M,H2~U,H3~A,b)	ka_Ret
RetP(H1~M,H2~U,H3~U,b)->RetP(H1~M,H2~M,H3~U,b)	kr_Ret
RetP(H1~M,H2~U,H3~U,b)->RetP(H1~M,H2~U,H3~M,b)	kr_Ret
RetP(H1~M,H2~U,H3~U,b)->RetP(H1~U,H2~U,H3~U,b)	ka_Ret
RetP(H1~M,H2~M,H3~U,b)->RetP(H1~U,H2~M,H3~U,b)	ka_Ret
RetP(H1~M,H2~M,H3~U,b)->RetP(H1~M,H2~U,H3~U,b)	ka_Ret
RetP(H1~M,H2~M,H3~U,b)->RetP(H1~M,H2~M,H3~A,b)	ka_Ret
RetP(H1~M,H2~M,H3~U,b)->RetP(H1~M,H2~M,H3~M,b)	kr_Ret
RetP(H1~M,H2~U,H3~M,b)->RetP(H1~U,H2~U,H3~M,b)	ka_Ret
RetP(H1~M,H2~U,H3~M,b)->RetP(H1~M,H2~U,H3~U,b)	ka_Ret
RetP(H1~M,H2~U,H3~M,b)->RetP(H1~M,H2~A,H3~M,b)	ka_Ret
RetP(H1~M,H2~U,H3~M,b)->RetP(H1~M,H2~M,H3~M,b)	kr_Ret
RetP(H1~U,H2~M,H3~M,b)->RetP(H1~U,H2~U,H3~M,b)	ka_Ret
RetP(H1~U,H2~M,H3~M,b)->RetP(H1~U,H2~M,H3~U,b)	ka_Ret
RetP(H1~U,H2~M,H3~M,b)->RetP(H1~A,H2~M,H3~M,b)	ka_Ret
RetP(H1~U,H2~M,H3~M,b)->RetP(H1~M,H2~M,H3~M,b)	kr_Ret
RetP(H1~A,H2~A,H3~U,b)->RetP(H1~U,H2~A,H3~U,b)	kr_Ret
RetP(H1~A,H2~A,H3~U,b)->RetP(H1~A,H2~U,H3~U,b)	kr_Ret
RetP(H1~A,H2~A,H3~U,b)->RetP(H1~A,H2~A,H3~M,b)	kr_Ret
RetP(H1~A,H2~A,H3~U,b)->RetP(H1~A,H2~A,H3~A,b)	ka_Ret
RetP(H1~A,H2~U,H3~A,b)->RetP(H1~U,H2~U,H3~A,b)	kr_Ret
RetP(H1~A,H2~U,H3~A,b)->RetP(H1~A,H2~U,H3~U,b)	kr_Ret
RetP(H1~A,H2~U,H3~A,b)->RetP(H1~A,H2~M,H3~A,b)	kr_Ret
RetP(H1~A,H2~U,H3~A,b)->RetP(H1~A,H2~A,H3~A,b)	ka_Ret
RetP(H1~U,H2~A,H3~A,b)->RetP(H1~U,H2~U,H3~A,b)	kr_Ret
RetP(H1~U,H2~A,H3~A,b)->RetP(H1~U,H2~A,H3~U,b)	kr_Ret
RetP(H1~U,H2~A,H3~A,b)->RetP(H1~M,H2~A,H3~A,b)	kr_Ret
RetP(H1~U,H2~A,H3~A,b)->RetP(H1~A,H2~A,H3~A,b)	ka_Ret
RetP(H1~U,H2~U,H3~A,b)->RetP(H1~M,H2~U,H3~A,b)	kr_Ret
RetP(H1~U,H2~U,H3~A,b)->RetP(H1~U,H2~M,H3~A,b)	kr_Ret
RetP(H1~U,H2~U,H3~A,b)->RetP(H1~A,H2~U,H3~A,b)	ka_Ret
RetP(H1~U,H2~U,H3~A,b)->RetP(H1~U,H2~A,H3~A,b)	ka_Ret
RetP(H1~U,H2~U,H3~A,b)->RetP(H1~U,H2~U,H3~U,b)	kr_Ret
RetP(H1~U,H2~A,H3~U,b)->RetP(H1~M,H2~A,H3~U,b)	kr_Ret
RetP(H1~U,H2~A,H3~U,b)->RetP(H1~U,H2~A,H3~M,b)	kr_Ret
RetP(H1~U,H2~A,H3~U,b)->RetP(H1~A,H2~A,H3~U,b)	ka_Ret
RetP(H1~U,H2~A,H3~U,b)->RetP(H1~U,H2~A,H3~A,b)	ka_Ret
RetP(H1~U,H2~A,H3~U,b)->RetP(H1~U,H2~U,H3~U,b)	kr_Ret
RetP(H1~A,H2~U,H3~U,b)->RetP(H1~A,H2~M,H3~U,b)	kr_Ret
RetP(H1~A,H2~U,H3~U,b)->RetP(H1~A,H2~U,H3~M,b)	kr_Ret
RetP(H1~A,H2~U,H3~U,b)->RetP(H1~A,H2~A,H3~U,b)	ka_Ret
RetP(H1~A,H2~U,H3~U,b)->RetP(H1~A,H2~U,H3~A,b)	ka_Ret
RetP(H1~A,H2~U,H3~U,b)->RetP(H1~U,H2~U,H3~U,b)	kr_Ret
RetP(H1~U,H2~U,H3~U,b)->RetP(H1~U,H2~U,H3~M,b)	kr_Ret
RetP(H1~U,H2~U,H3~U,b)->RetP(H1~U,H2~M,H3~U,b)	kr_Ret
RetP(H1~U,H2~U,H3~U,b)->RetP(H1~M,H2~U,H3~U,b)	kr_Ret
RetP(H1~U,H2~U,H3~U,b)->RetP(H1~U,H2~U,H3~A,b)	ka_Ret
RetP(H1~U,H2~U,H3~U,b)->RetP(H1~U,H2~A,H3~U,b)	ka_Ret
RetP(H1~U,H2~U,H3~U,b)->RetP(H1~A,H2~U,H3~U,b)	ka_Ret
RetP(H1~A,H2~M,H3~A,b)->RetP(H1~A,H2~M,H3~U,b)	kr_Ret
RetP(H1~A,H2~M,H3~A,b)->RetP(H1~U,H2~M,H3~A,b)	kr_Ret
RetP(H1~A,H2~M,H3~A,b)->RetP(H1~A,H2~U,H3~A,b)	ka_Ret
RetP(H1~A,H2~A,H3~M,b)->RetP(H1~A,H2~U,H3~M,b)	kr_Ret
RetP(H1~A,H2~A,H3~M,b)->RetP(H1~U,H2~A,H3~M,b)	kr_Ret
RetP(H1~A,H2~A,H3~M,b)->RetP(H1~A,H2~A,H3~U,b)	ka_Ret
RetP(H1~M,H2~A,H3~A,b)->RetP(H1~M,H2~A,H3~U,b)	kr_Ret
RetP(H1~M,H2~A,H3~A,b)->RetP(H1~M,H2~U,H3~A,b)	kr_Ret
RetP(H1~M,H2~A,H3~A,b)->RetP(H1~U,H2~A,H3~A,b)	ka_Ret
RetP(H1~A,H2~M,H3~M,b)->RetP(H1~A,H2~M,H3~U,b)	ka_Ret
RetP(H1~A,H2~M,H3~M,b)->RetP(H1~A,H2~U,H3~M,b)	ka_Ret
RetP(H1~A,H2~M,H3~M,b)->RetP(H1~U,H2~M,H3~M,b)	kr_Ret
RetP(H1~M,H2~A,H3~M,b)->RetP(H1~M,H2~A,H3~U,b)	ka_Ret
RetP(H1~M,H2~A,H3~M,b)->RetP(H1~U,H2~A,H3~M,b)	ka_Ret
RetP(H1~M,H2~A,H3~M,b)->RetP(H1~M,H2~U,H3~M,b)	kr_Ret
RetP(H1~M,H2~M,H3~A,b)->RetP(H1~M,H2~U,H3~A,b)	ka_Ret
RetP(H1~M,H2~M,H3~A,b)->RetP(H1~U,H2~M,H3~A,b)	ka_Ret
RetP(H1~M,H2~M,H3~A,b)->RetP(H1~M,H2~M,H3~U,b)	kr_Ret
RetP(H1~M,H2~M,H3~M,b)->RetP(H1~M,H2~M,H3~U,b)	ka_Ret
RetP(H1~M,H2~M,H3~M,b)->RetP(H1~M,H2~U,H3~M,b)	ka_Ret
RetP(H1~M,H2~M,H3~M,b)->RetP(H1~U,H2~M,H3~M,b)	ka_Ret
RetP(H1~A,H2~A,H3~A,b)->RetP(H1~A,H2~A,H3~U,b)	kr_Ret
RetP(H1~A,H2~A,H3~A,b)->RetP(H1~A,H2~U,H3~A,b)	kr_Ret
RetP(H1~A,H2~A,H3~A,b)->RetP(H1~U,H2~A,H3~A,b)	kr_Ret



#Non random (influence of other histone)
#Inhibition
RetP(H1~M,H2~A,H3~U,b)->RetP(H1~M,H2~U,H3~U,b)	kr_I_ret
RetP(H1~M,H2~A,H3~U,b)->RetP(H1~M,H2~A,H3~M,b)	kr_I_ret
RetP(H1~M,H2~U,H3~A,b)->RetP(H1~M,H2~U,H3~U,b)	kr_I_ret
RetP(H1~M,H2~U,H3~A,b)->RetP(H1~M,H2~M,H3~A,b)	kr_I_ret
RetP(H1~A,H2~M,H3~U,b)->RetP(H1~U,H2~M,H3~U,b)	kr_I_ret
RetP(H1~A,H2~M,H3~U,b)->RetP(H1~A,H2~M,H3~M,b)	kr_I_ret
RetP(H1~A,H2~U,H3~M,b)->RetP(H1~U,H2~U,H3~M,b)	kr_I_ret
RetP(H1~A,H2~U,H3~M,b)->RetP(H1~A,H2~M,H3~M,b)	kr_I_ret
RetP(H1~U,H2~M,H3~A,b)->RetP(H1~U,H2~M,H3~U,b)	kr_I_ret
RetP(H1~U,H2~M,H3~A,b)->RetP(H1~M,H2~M,H3~A,b)	kr_I_ret
RetP(H1~U,H2~A,H3~M,b)->RetP(H1~U,H2~U,H3~M,b)	kr_I_ret
RetP(H1~U,H2~A,H3~M,b)->RetP(H1~M,H2~A,H3~M,b)	kr_I_ret
RetP(H1~U,H2~U,H3~M,b)->RetP(H1~M,H2~U,H3~M,b)	kr_I_ret
RetP(H1~U,H2~U,H3~M,b)->RetP(H1~U,H2~M,H3~M,b)	kr_I_ret
RetP(H1~U,H2~M,H3~U,b)->RetP(H1~M,H2~M,H3~U,b)	kr_I_ret
RetP(H1~U,H2~M,H3~U,b)->RetP(H1~U,H2~M,H3~M,b)	kr_I_ret
RetP(H1~M,H2~U,H3~U,b)->RetP(H1~M,H2~M,H3~U,b)	kr_I_ret
RetP(H1~M,H2~U,H3~U,b)->RetP(H1~M,H2~U,H3~M,b)	kr_I_ret
RetP(H1~M,H2~M,H3~U,b)->RetP(H1~M,H2~M,H3~M,b)	kr_I_ret
RetP(H1~M,H2~U,H3~M,b)->RetP(H1~M,H2~M,H3~M,b)	kr_I_ret
RetP(H1~U,H2~M,H3~M,b)->RetP(H1~M,H2~M,H3~M,b)	kr_I_ret
RetP(H1~A,H2~M,H3~A,b)->RetP(H1~A,H2~M,H3~U,b)	kr_I_ret
RetP(H1~A,H2~M,H3~A,b)->RetP(H1~U,H2~M,H3~A,b)	kr_I_ret
RetP(H1~A,H2~A,H3~M,b)->RetP(H1~A,H2~U,H3~M,b)	kr_I_ret
RetP(H1~A,H2~A,H3~M,b)->RetP(H1~U,H2~A,H3~M,b)	kr_I_ret
RetP(H1~M,H2~A,H3~A,b)->RetP(H1~M,H2~A,H3~U,b)	kr_I_ret
RetP(H1~M,H2~A,H3~A,b)->RetP(H1~M,H2~U,H3~A,b)	kr_I_ret
RetP(H1~A,H2~M,H3~M,b)->RetP(H1~U,H2~M,H3~M,b)	kr_I_ret
RetP(H1~M,H2~A,H3~M,b)->RetP(H1~M,H2~U,H3~M,b)	kr_I_ret
RetP(H1~M,H2~M,H3~A,b)->RetP(H1~M,H2~M,H3~U,b)	kr_I_ret


#Activation
RetP(H1~M,H2~A,H3~U,b)->RetP(H1~U,H2~A,H3~U,b)	ka_I_ret
RetP(H1~M,H2~A,H3~U,b)->RetP(H1~M,H2~A,H3~A,b)	ka_I_ret
RetP(H1~M,H2~U,H3~A,b)->RetP(H1~U,H2~U,H3~A,b)	ka_I_ret
RetP(H1~M,H2~U,H3~A,b)->RetP(H1~M,H2~A,H3~A,b)	ka_I_ret
RetP(H1~A,H2~M,H3~U,b)->RetP(H1~A,H2~U,H3~U,b)	ka_I_ret
RetP(H1~A,H2~M,H3~U,b)->RetP(H1~A,H2~M,H3~A,b)	ka_I_ret
RetP(H1~A,H2~U,H3~M,b)->RetP(H1~A,H2~U,H3~U,b)	ka_I_ret
RetP(H1~A,H2~U,H3~M,b)->RetP(H1~A,H2~A,H3~M,b)	ka_I_ret
RetP(H1~U,H2~M,H3~A,b)->RetP(H1~U,H2~U,H3~A,b)	ka_I_ret
RetP(H1~U,H2~M,H3~A,b)->RetP(H1~A,H2~M,H3~A,b)	ka_I_ret
RetP(H1~U,H2~A,H3~M,b)->RetP(H1~U,H2~A,H3~U,b)	ka_I_ret
RetP(H1~U,H2~A,H3~M,b)->RetP(H1~A,H2~A,H3~M,b)	ka_I_ret
RetP(H1~A,H2~A,H3~U,b)->RetP(H1~A,H2~A,H3~A,b)	ka_I_ret
RetP(H1~A,H2~U,H3~A,b)->RetP(H1~A,H2~A,H3~A,b)	ka_I_ret
RetP(H1~U,H2~A,H3~A,b)->RetP(H1~A,H2~A,H3~A,b)	ka_I_ret
RetP(H1~U,H2~U,H3~A,b)->RetP(H1~A,H2~U,H3~A,b)	ka_I_ret
RetP(H1~U,H2~U,H3~A,b)->RetP(H1~U,H2~A,H3~A,b)	ka_I_ret
RetP(H1~U,H2~A,H3~U,b)->RetP(H1~A,H2~A,H3~U,b)	ka_I_ret
RetP(H1~U,H2~A,H3~U,b)->RetP(H1~U,H2~A,H3~A,b)	ka_I_ret
RetP(H1~A,H2~U,H3~U,b)->RetP(H1~A,H2~A,H3~U,b)	ka_I_ret
RetP(H1~A,H2~U,H3~U,b)->RetP(H1~A,H2~U,H3~A,b)	ka_I_ret
RetP(H1~A,H2~M,H3~A,b)->RetP(H1~A,H2~U,H3~A,b)	ka_I_ret
RetP(H1~A,H2~A,H3~M,b)->RetP(H1~A,H2~A,H3~U,b)	ka_I_ret
RetP(H1~M,H2~A,H3~A,b)->RetP(H1~U,H2~A,H3~A,b)	ka_I_ret
RetP(H1~A,H2~M,H3~M,b)->RetP(H1~A,H2~M,H3~U,b)	ka_I_ret
RetP(H1~A,H2~M,H3~M,b)->RetP(H1~A,H2~U,H3~M,b)	ka_I_ret
RetP(H1~M,H2~A,H3~M,b)->RetP(H1~M,H2~A,H3~U,b)	ka_I_ret
RetP(H1~M,H2~A,H3~M,b)->RetP(H1~U,H2~A,H3~M,b)	ka_I_ret
RetP(H1~M,H2~M,H3~A,b)->RetP(H1~M,H2~U,H3~A,b)	ka_I_ret
RetP(H1~M,H2~M,H3~A,b)->RetP(H1~U,H2~M,H3~A,b)	ka_I_ret



#TF binding
RetP(H1~M,H2~A,H3~U,b) + Aa(b,u~a)<->RetP(H1~M,H2~A,H3~U,b!0).Aa(b!0,u~a)	konR,koffR
RetP(H1~M,H2~A,H3~U,b) + As(b,u~a)<->RetP(H1~M,H2~A,H3~U,b!0).As(b!0,u~a)	konR,koffR
RetP(H1~M,H2~U,H3~A,b) + Aa(b,u~a)<->RetP(H1~M,H2~U,H3~A,b!0).Aa(b!0,u~a)	konR,koffR
RetP(H1~M,H2~U,H3~A,b) + As(b,u~a)<->RetP(H1~M,H2~U,H3~A,b!0).As(b!0,u~a)	konR,koffR
RetP(H1~A,H2~M,H3~U,b) + Aa(b,u~a)<->RetP(H1~A,H2~M,H3~U,b!0).Aa(b!0,u~a)	konR,koffR
RetP(H1~A,H2~M,H3~U,b) + As(b,u~a)<->RetP(H1~A,H2~M,H3~U,b!0).As(b!0,u~a)	konR,koffR
RetP(H1~A,H2~U,H3~M,b) + Aa(b,u~a)<->RetP(H1~A,H2~U,H3~M,b!0).Aa(b!0,u~a)	konR,koffR
RetP(H1~A,H2~U,H3~M,b) + As(b,u~a)<->RetP(H1~A,H2~U,H3~M,b!0).As(b!0,u~a)	konR,koffR
RetP(H1~U,H2~M,H3~A,b) + Aa(b,u~a)<->RetP(H1~U,H2~M,H3~A,b!0).Aa(b!0,u~a)	konR,koffR
RetP(H1~U,H2~M,H3~A,b) + As(b,u~a)<->RetP(H1~U,H2~M,H3~A,b!0).As(b!0,u~a)	konR,koffR
RetP(H1~U,H2~A,H3~M,b) + Aa(b,u~a)<->RetP(H1~U,H2~A,H3~M,b!0).Aa(b!0,u~a)	konR,koffR
RetP(H1~U,H2~A,H3~M,b) + As(b,u~a)<->RetP(H1~U,H2~A,H3~M,b!0).As(b!0,u~a)	konR,koffR
RetP(H1~U,H2~U,H3~M,b) + Aa(b,u~a)<->RetP(H1~U,H2~U,H3~M,b!0).Aa(b!0,u~a)	konR,koffR
RetP(H1~U,H2~U,H3~M,b) + As(b,u~a)<->RetP(H1~U,H2~U,H3~M,b!0).As(b!0,u~a)	konR,koffR
RetP(H1~U,H2~M,H3~U,b) + Aa(b,u~a)<->RetP(H1~U,H2~M,H3~U,b!0).Aa(b!0,u~a)	konR,koffR
RetP(H1~U,H2~M,H3~U,b) + As(b,u~a)<->RetP(H1~U,H2~M,H3~U,b!0).As(b!0,u~a)	konR,koffR
RetP(H1~M,H2~U,H3~U,b) + Aa(b,u~a)<->RetP(H1~M,H2~U,H3~U,b!0).Aa(b!0,u~a)	konR,koffR
RetP(H1~M,H2~U,H3~U,b) + As(b,u~a)<->RetP(H1~M,H2~U,H3~U,b!0).As(b!0,u~a)	konR,koffR
RetP(H1~M,H2~M,H3~U,b) + Aa(b,u~a)<->RetP(H1~M,H2~M,H3~U,b!0).Aa(b!0,u~a)	konR,koffR
RetP(H1~M,H2~M,H3~U,b) + As(b,u~a)<->RetP(H1~M,H2~M,H3~U,b!0).As(b!0,u~a)	konR,koffR
RetP(H1~M,H2~U,H3~M,b) + Aa(b,u~a)<->RetP(H1~M,H2~U,H3~M,b!0).Aa(b!0,u~a)	konR,koffR
RetP(H1~M,H2~U,H3~M,b) + As(b,u~a)<->RetP(H1~M,H2~U,H3~M,b!0).As(b!0,u~a)	konR,koffR
RetP(H1~U,H2~M,H3~M,b) + Aa(b,u~a)<->RetP(H1~U,H2~M,H3~M,b!0).Aa(b!0,u~a)	konR,koffR
RetP(H1~U,H2~M,H3~M,b) + As(b,u~a)<->RetP(H1~U,H2~M,H3~M,b!0).As(b!0,u~a)	konR,koffR
RetP(H1~A,H2~A,H3~U,b) + Aa(b,u~a)<->RetP(H1~A,H2~A,H3~U,b!0).Aa(b!0,u~a)	konR,koffR
RetP(H1~A,H2~A,H3~U,b) + As(b,u~a)<->RetP(H1~A,H2~A,H3~U,b!0).As(b!0,u~a)	konR,koffR
RetP(H1~A,H2~U,H3~A,b) + Aa(b,u~a)<->RetP(H1~A,H2~U,H3~A,b!0).Aa(b!0,u~a)	konR,koffR
RetP(H1~A,H2~U,H3~A,b) + As(b,u~a)<->RetP(H1~A,H2~U,H3~A,b!0).As(b!0,u~a)	konR,koffR
RetP(H1~U,H2~A,H3~A,b) + Aa(b,u~a)<->RetP(H1~U,H2~A,H3~A,b!0).Aa(b!0,u~a)	konR,koffR
RetP(H1~U,H2~A,H3~A,b) + As(b,u~a)<->RetP(H1~U,H2~A,H3~A,b!0).As(b!0,u~a)	konR,koffR
RetP(H1~U,H2~U,H3~A,b) + Aa(b,u~a)<->RetP(H1~U,H2~U,H3~A,b!0).Aa(b!0,u~a)	konR,koffR
RetP(H1~U,H2~U,H3~A,b) + As(b,u~a)<->RetP(H1~U,H2~U,H3~A,b!0).As(b!0,u~a)	konR,koffR
RetP(H1~U,H2~A,H3~U,b) + Aa(b,u~a)<->RetP(H1~U,H2~A,H3~U,b!0).Aa(b!0,u~a)	konR,koffR
RetP(H1~U,H2~A,H3~U,b) + As(b,u~a)<->RetP(H1~U,H2~A,H3~U,b!0).As(b!0,u~a)	konR,koffR
RetP(H1~A,H2~U,H3~U,b) + Aa(b,u~a)<->RetP(H1~A,H2~U,H3~U,b!0).Aa(b!0,u~a)	konR,koffR
RetP(H1~A,H2~U,H3~U,b) + As(b,u~a)<->RetP(H1~A,H2~U,H3~U,b!0).As(b!0,u~a)	konR,koffR
RetP(H1~U,H2~U,H3~U,b) + Aa(b,u~a)<->RetP(H1~U,H2~U,H3~U,b!0).Aa(b!0,u~a)	konR,koffR
RetP(H1~U,H2~U,H3~U,b) + As(b,u~a)<->RetP(H1~U,H2~U,H3~U,b!0).As(b!0,u~a)	konR,koffR
RetP(H1~A,H2~M,H3~A,b) + Aa(b,u~a)<->RetP(H1~A,H2~M,H3~A,b!0).Aa(b!0,u~a)	konR,koffR
RetP(H1~A,H2~M,H3~A,b) + As(b,u~a)<->RetP(H1~A,H2~M,H3~A,b!0).As(b!0,u~a)	konR,koffR
RetP(H1~A,H2~A,H3~M,b) + Aa(b,u~a)<->RetP(H1~A,H2~A,H3~M,b!0).Aa(b!0,u~a)	konR,koffR
RetP(H1~A,H2~A,H3~M,b) + As(b,u~a)<->RetP(H1~A,H2~A,H3~M,b!0).As(b!0,u~a)	konR,koffR
RetP(H1~M,H2~A,H3~A,b) + Aa(b,u~a)<->RetP(H1~M,H2~A,H3~A,b!0).Aa(b!0,u~a)	konR,koffR
RetP(H1~M,H2~A,H3~A,b) + As(b,u~a)<->RetP(H1~M,H2~A,H3~A,b!0).As(b!0,u~a)	konR,koffR
RetP(H1~A,H2~M,H3~M,b) + Aa(b,u~a)<->RetP(H1~A,H2~M,H3~M,b!0).Aa(b!0,u~a)	konR,koffR
RetP(H1~A,H2~M,H3~M,b) + As(b,u~a)<->RetP(H1~A,H2~M,H3~M,b!0).As(b!0,u~a)	konR,koffR
RetP(H1~M,H2~A,H3~M,b) + Aa(b,u~a)<->RetP(H1~M,H2~A,H3~M,b!0).Aa(b!0,u~a)	konR,koffR
RetP(H1~M,H2~A,H3~M,b) + As(b,u~a)<->RetP(H1~M,H2~A,H3~M,b!0).As(b!0,u~a)	konR,koffR
RetP(H1~M,H2~M,H3~A,b) + Aa(b,u~a)<->RetP(H1~M,H2~M,H3~A,b!0).Aa(b!0,u~a)	konR,koffR
RetP(H1~M,H2~M,H3~A,b) + As(b,u~a)<->RetP(H1~M,H2~M,H3~A,b!0).As(b!0,u~a)	konR,koffR
RetP(H1~M,H2~M,H3~M,b) + Aa(b,u~a)<->RetP(H1~M,H2~M,H3~M,b!0).Aa(b!0,u~a)	konR,koffR
RetP(H1~M,H2~M,H3~M,b) + As(b,u~a)<->RetP(H1~M,H2~M,H3~M,b!0).As(b!0,u~a)	konR,koffR
RetP(H1~A,H2~A,H3~A,b) + Aa(b,u~a)<->RetP(H1~A,H2~A,H3~A,b!0).Aa(b!0,u~a)	konR,koffR
RetP(H1~A,H2~A,H3~A,b) + As(b,u~a)<->RetP(H1~A,H2~A,H3~A,b!0).As(b!0,u~a)	konR,koffR


	
#TF

RetP(H1~M,H2~A,H3~U,b!0).Aa(b!0,u~a)->RetP(H1~U,H2~A,H3~U,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~M,H2~A,H3~U,b!0).As(b!0,u~a)->RetP(H1~U,H2~A,H3~U,b!0).As(b!0,u~a)	tf_ka
RetP(H1~M,H2~A,H3~U,b!0).Aa(b!0,u~a)->RetP(H1~M,H2~A,H3~A,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~M,H2~A,H3~U,b!0).As(b!0,u~a)->RetP(H1~M,H2~A,H3~A,b!0).As(b!0,u~a)	tf_ka
RetP(H1~M,H2~U,H3~A,b!0).Aa(b!0,u~a)->RetP(H1~U,H2~U,H3~A,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~M,H2~U,H3~A,b!0).As(b!0,u~a)->RetP(H1~U,H2~U,H3~A,b!0).As(b!0,u~a)	tf_ka
RetP(H1~M,H2~U,H3~A,b!0).Aa(b!0,u~a)->RetP(H1~M,H2~A,H3~A,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~M,H2~U,H3~A,b!0).As(b!0,u~a)->RetP(H1~M,H2~A,H3~A,b!0).As(b!0,u~a)	tf_ka
RetP(H1~A,H2~M,H3~U,b!0).Aa(b!0,u~a)->RetP(H1~A,H2~U,H3~U,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~A,H2~M,H3~U,b!0).As(b!0,u~a)->RetP(H1~A,H2~U,H3~U,b!0).As(b!0,u~a)	tf_ka
RetP(H1~A,H2~M,H3~U,b!0).Aa(b!0,u~a)->RetP(H1~A,H2~M,H3~A,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~A,H2~M,H3~U,b!0).As(b!0,u~a)->RetP(H1~A,H2~M,H3~A,b!0).As(b!0,u~a)	tf_ka
RetP(H1~A,H2~U,H3~M,b!0).Aa(b!0,u~a)->RetP(H1~A,H2~U,H3~U,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~A,H2~U,H3~M,b!0).As(b!0,u~a)->RetP(H1~A,H2~U,H3~U,b!0).As(b!0,u~a)	tf_ka
RetP(H1~A,H2~U,H3~M,b!0).Aa(b!0,u~a)->RetP(H1~A,H2~A,H3~M,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~A,H2~U,H3~M,b!0).As(b!0,u~a)->RetP(H1~A,H2~A,H3~M,b!0).As(b!0,u~a)	tf_ka
RetP(H1~U,H2~M,H3~A,b!0).Aa(b!0,u~a)->RetP(H1~U,H2~U,H3~A,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~U,H2~M,H3~A,b!0).As(b!0,u~a)->RetP(H1~U,H2~U,H3~A,b!0).As(b!0,u~a)	tf_ka
RetP(H1~U,H2~M,H3~A,b!0).Aa(b!0,u~a)->RetP(H1~A,H2~M,H3~A,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~U,H2~M,H3~A,b!0).As(b!0,u~a)->RetP(H1~A,H2~M,H3~A,b!0).As(b!0,u~a)	tf_ka
RetP(H1~U,H2~A,H3~M,b!0).Aa(b!0,u~a)->RetP(H1~U,H2~A,H3~U,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~U,H2~A,H3~M,b!0).As(b!0,u~a)->RetP(H1~U,H2~A,H3~U,b!0).As(b!0,u~a)	tf_ka
RetP(H1~U,H2~A,H3~M,b!0).Aa(b!0,u~a)->RetP(H1~A,H2~A,H3~M,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~U,H2~A,H3~M,b!0).As(b!0,u~a)->RetP(H1~A,H2~A,H3~M,b!0).As(b!0,u~a)	tf_ka
RetP(H1~U,H2~U,H3~M,b!0).Aa(b!0,u~a)->RetP(H1~A,H2~U,H3~M,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~U,H2~U,H3~M,b!0).As(b!0,u~a)->RetP(H1~A,H2~U,H3~M,b!0).As(b!0,u~a)	tf_ka
RetP(H1~U,H2~U,H3~M,b!0).Aa(b!0,u~a)->RetP(H1~U,H2~A,H3~M,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~U,H2~U,H3~M,b!0).As(b!0,u~a)->RetP(H1~U,H2~A,H3~M,b!0).As(b!0,u~a)	tf_ka
RetP(H1~U,H2~U,H3~M,b!0).Aa(b!0,u~a)->RetP(H1~U,H2~U,H3~U,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~U,H2~U,H3~M,b!0).As(b!0,u~a)->RetP(H1~U,H2~U,H3~U,b!0).As(b!0,u~a)	tf_ka
RetP(H1~U,H2~M,H3~U,b!0).Aa(b!0,u~a)->RetP(H1~A,H2~M,H3~U,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~U,H2~M,H3~U,b!0).As(b!0,u~a)->RetP(H1~A,H2~M,H3~U,b!0).As(b!0,u~a)	tf_ka
RetP(H1~U,H2~M,H3~U,b!0).Aa(b!0,u~a)->RetP(H1~U,H2~M,H3~A,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~U,H2~M,H3~U,b!0).As(b!0,u~a)->RetP(H1~U,H2~M,H3~A,b!0).As(b!0,u~a)	tf_ka
RetP(H1~U,H2~M,H3~U,b!0).Aa(b!0,u~a)->RetP(H1~U,H2~U,H3~U,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~U,H2~M,H3~U,b!0).As(b!0,u~a)->RetP(H1~U,H2~U,H3~U,b!0).As(b!0,u~a)	tf_ka
RetP(H1~M,H2~U,H3~U,b!0).Aa(b!0,u~a)->RetP(H1~M,H2~A,H3~U,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~M,H2~U,H3~U,b!0).As(b!0,u~a)->RetP(H1~M,H2~A,H3~U,b!0).As(b!0,u~a)	tf_ka
RetP(H1~M,H2~U,H3~U,b!0).Aa(b!0,u~a)->RetP(H1~M,H2~U,H3~A,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~M,H2~U,H3~U,b!0).As(b!0,u~a)->RetP(H1~M,H2~U,H3~A,b!0).As(b!0,u~a)	tf_ka
RetP(H1~M,H2~U,H3~U,b!0).Aa(b!0,u~a)->RetP(H1~U,H2~U,H3~U,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~M,H2~U,H3~U,b!0).As(b!0,u~a)->RetP(H1~U,H2~U,H3~U,b!0).As(b!0,u~a)	tf_ka
RetP(H1~M,H2~M,H3~U,b!0).Aa(b!0,u~a)->RetP(H1~U,H2~M,H3~U,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~M,H2~M,H3~U,b!0).As(b!0,u~a)->RetP(H1~U,H2~M,H3~U,b!0).As(b!0,u~a)	tf_ka
RetP(H1~M,H2~M,H3~U,b!0).Aa(b!0,u~a)->RetP(H1~M,H2~U,H3~U,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~M,H2~M,H3~U,b!0).As(b!0,u~a)->RetP(H1~M,H2~U,H3~U,b!0).As(b!0,u~a)	tf_ka
RetP(H1~M,H2~M,H3~U,b!0).Aa(b!0,u~a)->RetP(H1~M,H2~M,H3~A,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~M,H2~M,H3~U,b!0).As(b!0,u~a)->RetP(H1~M,H2~M,H3~A,b!0).As(b!0,u~a)	tf_ka
RetP(H1~M,H2~U,H3~M,b!0).Aa(b!0,u~a)->RetP(H1~U,H2~U,H3~M,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~M,H2~U,H3~M,b!0).As(b!0,u~a)->RetP(H1~U,H2~U,H3~M,b!0).As(b!0,u~a)	tf_ka
RetP(H1~M,H2~U,H3~M,b!0).Aa(b!0,u~a)->RetP(H1~M,H2~U,H3~U,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~M,H2~U,H3~M,b!0).As(b!0,u~a)->RetP(H1~M,H2~U,H3~U,b!0).As(b!0,u~a)	tf_ka
RetP(H1~M,H2~U,H3~M,b!0).Aa(b!0,u~a)->RetP(H1~M,H2~A,H3~M,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~M,H2~U,H3~M,b!0).As(b!0,u~a)->RetP(H1~M,H2~A,H3~M,b!0).As(b!0,u~a)	tf_ka
RetP(H1~U,H2~M,H3~M,b!0).Aa(b!0,u~a)->RetP(H1~U,H2~U,H3~M,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~U,H2~M,H3~M,b!0).As(b!0,u~a)->RetP(H1~U,H2~U,H3~M,b!0).As(b!0,u~a)	tf_ka
RetP(H1~U,H2~M,H3~M,b!0).Aa(b!0,u~a)->RetP(H1~U,H2~M,H3~U,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~U,H2~M,H3~M,b!0).As(b!0,u~a)->RetP(H1~U,H2~M,H3~U,b!0).As(b!0,u~a)	tf_ka
RetP(H1~U,H2~M,H3~M,b!0).Aa(b!0,u~a)->RetP(H1~A,H2~M,H3~M,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~U,H2~M,H3~M,b!0).As(b!0,u~a)->RetP(H1~A,H2~M,H3~M,b!0).As(b!0,u~a)	tf_ka
RetP(H1~A,H2~A,H3~U,b!0).Aa(b!0,u~a)->RetP(H1~A,H2~A,H3~A,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~A,H2~A,H3~U,b!0).As(b!0,u~a)->RetP(H1~A,H2~A,H3~A,b!0).As(b!0,u~a)	tf_ka
RetP(H1~A,H2~U,H3~A,b!0).Aa(b!0,u~a)->RetP(H1~A,H2~A,H3~A,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~A,H2~U,H3~A,b!0).As(b!0,u~a)->RetP(H1~A,H2~A,H3~A,b!0).As(b!0,u~a)	tf_ka
RetP(H1~U,H2~A,H3~A,b!0).Aa(b!0,u~a)->RetP(H1~A,H2~A,H3~A,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~U,H2~A,H3~A,b!0).As(b!0,u~a)->RetP(H1~A,H2~A,H3~A,b!0).As(b!0,u~a)	tf_ka
RetP(H1~U,H2~U,H3~A,b!0).Aa(b!0,u~a)->RetP(H1~A,H2~U,H3~A,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~U,H2~U,H3~A,b!0).As(b!0,u~a)->RetP(H1~A,H2~U,H3~A,b!0).As(b!0,u~a)	tf_ka
RetP(H1~U,H2~U,H3~A,b!0).Aa(b!0,u~a)->RetP(H1~U,H2~A,H3~A,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~U,H2~U,H3~A,b!0).As(b!0,u~a)->RetP(H1~U,H2~A,H3~A,b!0).As(b!0,u~a)	tf_ka
RetP(H1~U,H2~A,H3~U,b!0).Aa(b!0,u~a)->RetP(H1~A,H2~A,H3~U,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~U,H2~A,H3~U,b!0).As(b!0,u~a)->RetP(H1~A,H2~A,H3~U,b!0).As(b!0,u~a)	tf_ka
RetP(H1~U,H2~A,H3~U,b!0).Aa(b!0,u~a)->RetP(H1~U,H2~A,H3~A,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~U,H2~A,H3~U,b!0).As(b!0,u~a)->RetP(H1~U,H2~A,H3~A,b!0).As(b!0,u~a)	tf_ka
RetP(H1~A,H2~U,H3~U,b!0).Aa(b!0,u~a)->RetP(H1~A,H2~A,H3~U,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~A,H2~U,H3~U,b!0).As(b!0,u~a)->RetP(H1~A,H2~A,H3~U,b!0).As(b!0,u~a)	tf_ka
RetP(H1~A,H2~U,H3~U,b!0).Aa(b!0,u~a)->RetP(H1~A,H2~U,H3~A,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~A,H2~U,H3~U,b!0).As(b!0,u~a)->RetP(H1~A,H2~U,H3~A,b!0).As(b!0,u~a)	tf_ka
RetP(H1~U,H2~U,H3~U,b!0).Aa(b!0,u~a)->RetP(H1~U,H2~U,H3~A,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~U,H2~U,H3~U,b!0).As(b!0,u~a)->RetP(H1~U,H2~U,H3~A,b!0).As(b!0,u~a)	tf_ka
RetP(H1~U,H2~U,H3~U,b!0).Aa(b!0,u~a)->RetP(H1~U,H2~A,H3~U,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~U,H2~U,H3~U,b!0).As(b!0,u~a)->RetP(H1~U,H2~A,H3~U,b!0).As(b!0,u~a)	tf_ka
RetP(H1~U,H2~U,H3~U,b!0).Aa(b!0,u~a)->RetP(H1~A,H2~U,H3~U,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~U,H2~U,H3~U,b!0).As(b!0,u~a)->RetP(H1~A,H2~U,H3~U,b!0).As(b!0,u~a)	tf_ka
RetP(H1~A,H2~M,H3~A,b!0).Aa(b!0,u~a)->RetP(H1~A,H2~U,H3~A,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~A,H2~M,H3~A,b!0).As(b!0,u~a)->RetP(H1~A,H2~U,H3~A,b!0).As(b!0,u~a)	tf_ka
RetP(H1~A,H2~A,H3~M,b!0).Aa(b!0,u~a)->RetP(H1~A,H2~A,H3~U,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~A,H2~A,H3~M,b!0).As(b!0,u~a)->RetP(H1~A,H2~A,H3~U,b!0).As(b!0,u~a)	tf_ka
RetP(H1~M,H2~A,H3~A,b!0).Aa(b!0,u~a)->RetP(H1~U,H2~A,H3~A,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~M,H2~A,H3~A,b!0).As(b!0,u~a)->RetP(H1~U,H2~A,H3~A,b!0).As(b!0,u~a)	tf_ka
RetP(H1~A,H2~M,H3~M,b!0).Aa(b!0,u~a)->RetP(H1~A,H2~M,H3~U,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~A,H2~M,H3~M,b!0).As(b!0,u~a)->RetP(H1~A,H2~M,H3~U,b!0).As(b!0,u~a)	tf_ka
RetP(H1~A,H2~M,H3~M,b!0).Aa(b!0,u~a)->RetP(H1~A,H2~U,H3~M,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~A,H2~M,H3~M,b!0).As(b!0,u~a)->RetP(H1~A,H2~U,H3~M,b!0).As(b!0,u~a)	tf_ka
RetP(H1~M,H2~A,H3~M,b!0).Aa(b!0,u~a)->RetP(H1~M,H2~A,H3~U,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~M,H2~A,H3~M,b!0).As(b!0,u~a)->RetP(H1~M,H2~A,H3~U,b!0).As(b!0,u~a)	tf_ka
RetP(H1~M,H2~A,H3~M,b!0).Aa(b!0,u~a)->RetP(H1~U,H2~A,H3~M,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~M,H2~A,H3~M,b!0).As(b!0,u~a)->RetP(H1~U,H2~A,H3~M,b!0).As(b!0,u~a)	tf_ka
RetP(H1~M,H2~M,H3~A,b!0).Aa(b!0,u~a)->RetP(H1~M,H2~U,H3~A,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~M,H2~M,H3~A,b!0).As(b!0,u~a)->RetP(H1~M,H2~U,H3~A,b!0).As(b!0,u~a)	tf_ka
RetP(H1~M,H2~M,H3~A,b!0).Aa(b!0,u~a)->RetP(H1~U,H2~M,H3~A,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~M,H2~M,H3~A,b!0).As(b!0,u~a)->RetP(H1~U,H2~M,H3~A,b!0).As(b!0,u~a)	tf_ka
RetP(H1~M,H2~M,H3~M,b!0).Aa(b!0,u~a)->RetP(H1~M,H2~M,H3~U,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~M,H2~M,H3~M,b!0).As(b!0,u~a)->RetP(H1~M,H2~M,H3~U,b!0).As(b!0,u~a)	tf_ka
RetP(H1~M,H2~M,H3~M,b!0).Aa(b!0,u~a)->RetP(H1~M,H2~U,H3~M,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~M,H2~M,H3~M,b!0).As(b!0,u~a)->RetP(H1~M,H2~U,H3~M,b!0).As(b!0,u~a)	tf_ka
RetP(H1~M,H2~M,H3~M,b!0).Aa(b!0,u~a)->RetP(H1~U,H2~M,H3~M,b!0).Aa(b!0,u~a)	tf_ka
RetP(H1~M,H2~M,H3~M,b!0).As(b!0,u~a)->RetP(H1~U,H2~M,H3~M,b!0).As(b!0,u~a)	tf_ka


#Transcription

#RetP(H1~A,H2~A,H3~U,b!0).Aa(b!0,u~a)->RetP(H1~A,H2~A,H3~U,b!0).Aa(b!0,u~a) +  RNA_Ret() TR_ret
#RetP(H1~A,H2~A,H3~U,b!0).As(b!0,u~a)->RetP(H1~A,H2~A,H3~U,b!0).As(b!0,u~a) +  RNA_Ret() TR_ret
#RetP(H1~A,H2~U,H3~A,b!0).Aa(b!0,u~a)->RetP(H1~A,H2~U,H3~A,b!0).Aa(b!0,u~a) +  RNA_Ret() TR_ret
#RetP(H1~A,H2~U,H3~A,b!0).As(b!0,u~a)->RetP(H1~A,H2~U,H3~A,b!0).As(b!0,u~a) +  RNA_Ret() TR_ret
#RetP(H1~U,H2~A,H3~A,b!0).Aa(b!0,u~a)->RetP(H1~U,H2~A,H3~A,b!0).Aa(b!0,u~a) +  RNA_Ret() TR_ret
#RetP(H1~U,H2~A,H3~A,b!0).As(b!0,u~a)->RetP(H1~U,H2~A,H3~A,b!0).As(b!0,u~a) +  RNA_Ret() TR_ret
#RetP(H1~U,H2~U,H3~A,b!0).Aa(b!0,u~a)->RetP(H1~U,H2~U,H3~A,b!0).Aa(b!0,u~a) +  RNA_Ret() TR_ret
#RetP(H1~U,H2~U,H3~A,b!0).As(b!0,u~a)->RetP(H1~U,H2~U,H3~A,b!0).As(b!0,u~a) +  RNA_Ret() TR_ret
#RetP(H1~U,H2~A,H3~U,b!0).Aa(b!0,u~a)->RetP(H1~U,H2~A,H3~U,b!0).Aa(b!0,u~a) +  RNA_Ret() TR_ret
#RetP(H1~U,H2~A,H3~U,b!0).As(b!0,u~a)->RetP(H1~U,H2~A,H3~U,b!0).As(b!0,u~a) +  RNA_Ret() TR_ret
#RetP(H1~A,H2~U,H3~U,b!0).Aa(b!0,u~a)->RetP(H1~A,H2~U,H3~U,b!0).Aa(b!0,u~a) +  RNA_Ret() TR_ret
#RetP(H1~A,H2~U,H3~U,b!0).As(b!0,u~a)->RetP(H1~A,H2~U,H3~U,b!0).As(b!0,u~a) +  RNA_Ret() TR_ret
#RetP(H1~U,H2~U,H3~U,b!0).Aa(b!0,u~a)->RetP(H1~U,H2~U,H3~U,b!0).Aa(b!0,u~a) +  RNA_Ret() TR_ret
#RetP(H1~U,H2~U,H3~U,b!0).As(b!0,u~a)->RetP(H1~U,H2~U,H3~U,b!0).As(b!0,u~a) +  RNA_Ret() TR_ret
#RetP(H1~A,H2~A,H3~A,b!0).Aa(b!0,u~a)->RetP(H1~A,H2~A,H3~A,b!0).Aa(b!0,u~a) +  RNA_Ret() TR_ret
#RetP(H1~A,H2~A,H3~A,b!0).As(b!0,u~a)->RetP(H1~A,H2~A,H3~A,b!0).As(b!0,u~a) +  RNA_Ret() TR_ret


	#RNA_Ret()  -> RNA_Ret() + Ret(b) k_prod_Aa
############################################################################################

#Translation

	RNA_Aa()  -> RNA_Aa() + Aa(b,u~i) k_prod_Aa
	Aa(b,u~i) <-> Aa(b,u~a) k_act,k_inact

#Degradation rates

##########################################################################################################################
#Basal transcription
AaP() -> AaP() + RNA_Aa() s


	
#Degradation rates
	RNA_Aa() -> Trash() k_degrRNA

	Aa(b) -> Trash() k_degr 	

	As(b) -> Trash() k_degr 
	
	Aa().AaP() -> AaP() k_degr DeleteMolecules
	
	As().AaP() -> AaP() k_degr DeleteMolecules  

	Aa().RetP() -> RetP() k_degr DeleteMolecules
	
	As().RetP() -> RetP() k_degr DeleteMolecules  


#

#Cómo establezco que entre m[as q este en b, mas afin se vuelve? 6.2.4 de info en rule bender

#Posibilidad b) cambio conformacional dr[astico del ADN en cuanto se pega el ligando

end reaction rules



end model


#ACTIONS

generate_network({overwrite=>1});




simulate_ode({t_end=>1440,n_steps=>1440});
#simulate_ssa({t_end=>300,n_steps=>100});

